PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(0,0,0)
  expName = seq_teaching_exp
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Routines
  Routine Raven_Matrices
    TextComponent rv_txt1
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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    ButtonComponent rv_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600.0
      text = Next
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  Routine MERGE_TEST
    VariableComponent merge_test_ans
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextComponent merge_test_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent merge_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Put fruits on the CONVEYOR BELT by entering their labels as  X,X,X,X,X,X,X,X, ... ,X
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    TextComponent merge_test_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT
    TextboxComponent merge_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextboxComponent merge_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextboxComponent merge_test_compare
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Compare
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    TextboxComponent merge_test_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent merge_test_setup
      Code Type = Auto->JS
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      Each Frame:
        if merge_test_mouse.isPressedIn(merge_test_compare):
            merge_test_compareN = merge_test_compareN + compare(merge_test_scale,merge_test_input,merge_test_labels,merge_test_scale_instr,merge_test_scale_left,merge_test_scale_right)

        merge_test_timer.text = timerWarning(mergeTestTimeL,t)

        merge_test_ans = merge_test_res.text
    TextboxComponent merge_test_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
      text = Submit
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    MouseComponent merge_test_mouse
      clickable = [merge_test_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    TextComponent merge_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90
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  Routine MERGE_TRAIN
    VariableComponent mc_order
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent merge_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent merge_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent merge_train_mc_path_2
      saveStartStop = False
      startRoutineValue = mc_path_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent merge_train_mc_path_1
      saveStartStop = False
      startRoutineValue = mc_path_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent merge_train_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent merge_train_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent merge_ans_instr
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Please SELECT the CONVEYOR BELT that has the correct fruit(s) on YELLOW position(s):
      wrapWidth = 1.5
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    TextComponent merge_train_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT
    TextboxComponent merge_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent merge_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent merge_train_compare
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Compare
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    ImageComponent merge_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.11)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent merge_train
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent merge_train_mc_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3,-0.25)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent merge_train_mc_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3, -0.4)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent merge_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent merge_train_setup
      Code Type = Auto->JS
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      Each Frame:
        if mc_order == []:
            mc_order = getCorrectMCOrder(TRAIN_1.thisTrialN,merge_train_mc_path_1,merge_train_mc_path_2,merge_train_mc_1,merge_train_mc_2)

        if merge_train_mouse.isPressedIn(merge_train_compare):
            merge_train_compareN = merge_train_compareN + compare(merge_train_scale,merge_train_input,merge_train_labels,merge_train_scale_instr,merge_train_scale_left,merge_train_scale_right)

        merge_train_timer.text = timerWarning(mergeTrainTimeL,t)
    TextboxComponent merge_train_btn_1
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.25)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
      text = Submit
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    TextboxComponent merge_train_btn_2
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
      text = Submit
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    MouseComponent merge_train_mouse
      clickable = [merge_train_btn_1,merge_train_btn_2]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent merge_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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  Routine SORT_TRAIN_EXPL
    ButtonComponent sort_train_expl_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.42)
      size = [0.30,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Continue
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    TextboxComponent sort_submitted_res
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (-0.5, 0.25)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_expl_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.1, 0)
      size = (0.005,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_expl
      image [set every repeat] = $expl_path
      pos = (0.4, 0.05)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_expl_feedback_1
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.7
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    TextComponent sort_train_expl_feedback_2
      letterHeight = 0.03
      pos = (-0.5, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_expl_instr
      letterHeight = 0.03
      pos = (-0.5,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Read the feedback and continue whenever you are ready
      wrapWidth = 0.6
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    CodeComponent sort_train_expl_setup
      Code Type = Auto->JS
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      Begin Routine:
        sort_submitted_res.text = submited
        checkSortTrainAns(sort_train_input,TRAIN_2.thisTrialN,labels,sort_inter_res,sort_train_expl_feedback_1,sort_train_expl_feedback_2)
      End Routine:
        repeats = makeScreenShot()
  Routine MERGE_INTRO
    TextComponent intro_text_2
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1
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      text:
        ALICE: BIZZ ... Thank you for coming to help! We have fruits in some boxes to be put on a conveyor.

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT

        LEARN the BLUE STAR operation in steps and master it.
    ImageComponent alice_2
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_3
      image = materials/merge_sort/imgs/door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent merge_intro_code
      Code Type = Auto->JS
    TextboxComponent merge_intro_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent merge_intro_mouse
      clickable = [merge_intro_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine INTRO
    TextComponent intro_text
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Today, you will learn how to help our robot trader friends ALICE & BOB to package fruits for shipment.

        You will visit two warehouses "rooms", in which you will learn individual steps of the process from ALICE and BOB.

        In the end, you can put the skills learned in the rooms together and complete the whole process by yourself!
    ImageComponent alice
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent bob
      image = materials/merge_sort/imgs/bob.png
      pos = (0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_1
      image = materials/merge_sort/imgs/door.png
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_2
      image = materials/merge_sort/imgs/door.png
      pos = (0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent setup
      Code Type = Auto->JS
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      Before Experiment:
        sleepTime = 0.2
        green =  (-0.0039, 1.0000, -1.0000)
        red = (1.0000, -0.2235, -0.4431)
        white = "white"
        repeats = 0
        traceSaveAtFrame = 20

        introTimeL=120
        mergeTestTimeL = 90
        mergeTrainTimeL = 60
        mergeExplTimeL = 30
        sortTestTimeL = 300
        sortTrainTimeL = 240
        sortExplTimeL=60


        scaleEqPath = "materials/merge_sort/imgs/scale_balanced.png"
        scaleLtPath = "materials/merge_sort/imgs/scale_right.png"
        scaleGtPath = "materials/merge_sort/imgs/scale_left.png"

        def moveItem(mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                (u,v) = mouse.getPos()
                if left <= u and u <= right and bot <= v and v <= top:
                    grabbed.pos = (u,v)
                return grabbed
            else:
                # Move newly clicked piece
                for item in items:
                    if mouse.isPressedIn(item) and grabbed is not item:
                        return item
            return grabbed

        def comparePickedItems(scale,values,labels,leftInput,rightInput):
            if len(leftInput.text) == 0 or len(leftInput.text) == 0:
                raise ValueError()
            elif len(leftInput.text) > 1 or len(leftInput.text) > 1:
                raise TypeError()
            try:
                leftIdx = labels.index(leftInput.text)
                rightIdx = labels.index(rightInput.text)
            except ValueError:
                raise IndexError()
            leftValue = values[leftIdx]
            rightValue = values[rightIdx]
            if leftValue > rightValue:
                scale.image = scaleGtPath
            elif leftValue < rightValue:
                scale.image = scaleLtPath
            else:
                scale.image = scaleEqPath
            timeSleep(sleepTime)

        def timeSleep(T):
            u = 0
            for i in range(10000*T):
                u = u + 1

        def compare(scale,listValues,labels,instr,scaleLeft,scaleRight):
            try:
                comparePickedItems(scale,listValues,labels,scaleLeft,scaleRight)
                instr.text = ""
                instr.color = white
                return 1
            except ValueError:
                instr.text = "Please provide labels in correct format for both LHS and RHS"
                instr.color = red
                return 0
            except IndexError:
                instr.text = "Please enter an existing item"
                instr.color = red
                return 0
            except TypeError:
                instr.text = "Please enter labels as single capitals"
                instr.color = red
                return 0
        def labelMergeInput(input, labelList):
            temp = sorted(input)
            labels = []
            for i in temp:
                labels.append(labelList[input.index(i)])
            return labels

        def checkSortTrainAns(input,labels,res,feedback_1,feedback_2):
            correct = getSortTrace(input,labels)
            submitted = res.replace(" ","")
            values = res.replace(",","")
            correctValues = correct.replace(",","")
            if submitted == correct:
                feedback_1.text = "Your answer is correct!"
                feedback_1.color = green
                feedback_2.text = ""
            elif values == correctValues:
                feedback_1.text = "Your answer does not have the correct format!\n"
                feedback_1.color = red
                feedback_2.text = "The correct answer is >>>>\n" + correct
                feedback_2.color = green
            else:
                feedback_1.text = "Your answer is wrong!"
                feedback_1.color = red
                feedback_2.text = "The correct answer is >>>>\n" + correct
                feedback_2.color = green

        def getSortTrace(input,labels):
            temp = []
            for i in input:
                temp.append([i])
            while len(temp) > 1:
                sublists = []
                for i in range(0,int(len(temp)/2)):
                    sublists.append(sorted(temp[i*2] + temp[i*2+1]))
                if len(temp) % 2 == 1:
                    temp = sublists + [temp[-1]]
                else:
                    temp = sublists
            sublistLabels = ""
            for i in range(0,len(temp)):
                for j in range(0,len(temp[i])):
                    sublistLabels = sublistLabels + labels[input.index(temp[i][j])]
                    if i < len(temp) - 1 or j < len(temp[i]) - 1: sublistLabels = sublistLabels + ","
            return sublistLabels

        # enable image components on white board given an input list to sort
        def enableImageComponents(components,labels,imagePathBase):
            enabledComponents = []
            i = 0
            for component in components:
                if isinstance(component,visual.ImageStim):
                    exId= component.name.split("_")[-2:]
                    if exId[-2] == "ex":
                        imageIdx= exId[-1]
                        if int(imageIdx) > len(labels):
                            component.image = None
                        else:
                            component.image = imagePathBase + "_" + labels[i] + ".png"
                            enabledComponents.append(component)
                            i += 1
            return enabledComponents

        def getCorrectMCOrder(N,path1,path2,img1,img2):
            rand_seq = [0, 1, 1, 1, 0, 0, 0, 1, 0, 1, 1, 0, 1, 0, 0, 0, 1, 0, 1, 1, 0, 0, 1, 0, 0, 1, 0, 1, 1, 1]
            order = [rand_seq[N-1],1-rand_seq[N-1]]
            if (path1.split("_")[-1] == "wrong.png" and path2.split("_")[-1] == "correct.png") or (path2.split("_")[-1] == "wrong.png" and path1.split("_")[-1] == "correct.png"):
                if order == [1,0]:
                    img1.image = path1
                    img2.image = path2
                else:
                    img1.image = path2
                    img2.image = path1
                return order
            else:
                raise ValueError("Training multiple choice setup is incorrect!")

        def showMergeExpl(submitted,feedback1,feedback2,mc1,mc2,mcPath1,mcPath2,expl1,expl2):
            # finds which choice user has selected
            feedback1.text = ""
            feedback2.text = ""

            if submitted == 0:
                feedback1.text = "SELECTED >>> \n"
            elif submitted == 1:
                feedback2.text = "SELECTED >>> \n"

            # show user which answer is correct and wrong
            if mc_order == [1,0]:
                feedback1.color = green
                feedback2.color = red
                feedback1.text = feedback1.text + "This answer is correct!"
                feedback2.text = feedback2.text + "This answer is wrong!"

                 # show the selections
                mc1.image = mcPath1.split(".png")[0] + "_selected.png"
                mc2.image = mcPath2.split(".png")[0] + "_selected.png"
                expl1.image = mcPath1.split(".png")[0] + "_expl.png"
                expl2.image = mcPath2.split(".png")[0] + "_expl.png"
            else:
                feedback1.color = red
                feedback2.color = green
                feedback1.text = feedback1.text + "This answer is wrong!"
                feedback2.text = feedback2.text + "This answer is correct!"

                 # show the selections
                mc1.image = mcPath2.split(".png")[0] + "_selected.png"
                mc2.image = mcPath1.split(".png")[0] + "_selected.png"
                expl1.image = mcPath2.split(".png")[0] + "_expl.png"
                expl2.image = mcPath1.split(".png")[0] + "_expl.png"

        def checkBGSelection(m,groups,picked):
            for item in groups:
                if m != None and m.isPressedIn(item):
                    for others in groups:
                        others.fillColor = white
                    item.fillColor = green
                    timeSleep(sleepTime)
                    return item
            return picked

        def timerWarning(timeLimt, timePassed):
            tRemain = int(timeLimt- t)
            if tRemain <= 30:
                return "Remain time sec: "+ str(tRemain)
            else:
                return ""

        def updateTrace(itemPos,newItemPos):
            updated = []
            for i in itemPos:
                for j in newItemPos:
                    if i[0] == j[0] and not (i[1] == j[1] and i[2] == j[2]):
                        updated.append(j)
            return updated

        def makeScreenShot():
            #win.getMovieFrame()
            #win.saveMovieFrames(str(repeats) + '.png')
            return repeats + 1
    TextboxComponent intro_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent intro_mouse
      clickable = [intro_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine SORT_INTRO
    TextComponent intro_text_3
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        BOB: CLIKKKK ... SOOO GOOooD to see you!

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        LEARN the PURPLE DIAMOND operation in steps and master it.
    ImageComponent bob_2
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example
      image = materials/merge_sort/imgs/sort_train/sort_train_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_4
      image = materials/merge_sort/imgs/door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent sort_intro_code
      Code Type = Auto->JS
    TextboxComponent sort_intro_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent sort_intro_mouse
      clickable = [sort_intro_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine FINAL_TEST_1
    VariableComponent final_test_1_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent final_test_1_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent final_test_1_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits on the CONVEYOR BELT by entering their labels as  X,X,X,X,X,X,X,X, ... ,X
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    TextComponent final_test_1_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT
    ButtonComponent final_test_1_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    TextboxComponent final_test_1_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_1_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_1_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent final_test_1_res
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    CodeComponent final_test_1_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine
        cntCompared = 0
        labels = labelMergeInput(final_test_1_input,alphabet)
      Each Frame:
        # Each Frame
        if mouse.isPressedIn(final_test_1_compare):
            compare(final_test_1_scale,final_test_1_input,labels,final_test_1_scale_instr,final_test_1_scale_left,final_test_1_scale_right)
      End Routine:
        repeats = makeScreenShot()
  Routine FINAL_TEST_INTRO
    TextComponent intro_text_4
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        You have done a great job! Here are some final challenges!

        Recall what you have learned and you will answer some questions similar to the ones that you have seen.

        Try your best to answer these questions!
    ButtonComponent intro_btn_4
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent alice_3
      image = materials/merge_sort/demo_imgs/alice.png
      pos = (-0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent bob_3
      image = materials/merge_sort/demo_imgs/bob.png
      pos = (0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent door
      image = materials/merge_sort/demo_imgs/door.png
      pos = (-0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent door_5
      image = materials/merge_sort/demo_imgs/door.png
      pos = (0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent final_test_intro_code
      Code Type = Auto->JS
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      End Routine:
        repeats = makeScreenShot()
  Routine DEBRIEF
    TextComponent intro_text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        This is the end of the experiment!

        Thank you very much for your time and effort!
    TextboxComponent debrief_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.15,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 10
      text = End
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    MouseComponent debrief_mouse
      clickable = [debrief_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 10
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  Routine MERGE_TEST_INTRO
    TextComponent intro_text_6
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1
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      text:
        ALICE: BIZZ ... Now is time to apply the knowledge you learned about the BLUE STAR

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT
    ImageComponent alice_4
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example_2
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_6
      image = materials/merge_sort/imgs/door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent merge_test_intro_code
      Code Type = Auto->JS
    TextboxComponent merge_test_intro_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent merge_test_intro_mouse
      clickable = [merge_test_intro_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine SORT_TEST_INTRO
    TextComponent intro_text_7
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        BOB: CLIKKKK ... Now is time to apply the knowledge you learned about the PURPLE DIAMOND

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT
    ImageComponent bob_4
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example_2
      image = materials/merge_sort/imgs/sort_train/sort_test_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_7
      image = materials/merge_sort/imgs/door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent sort_test_intro_code
      Code Type = Auto->JS
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      End Routine:
        repeats = makeScreenShot()
    TextboxComponent sort_test_intro_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent sort_test_intro_mouse
      clickable = [sort_test_intro_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine SORT_TRAIN
    VariableComponent sort_train_compare_limit
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = ms_compare
      startVal [time (s)] = 0
      stopVal [time (s)] = 240
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    VariableComponent sort_train_ans
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [time (s)] = 240
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    VariableComponent sort_train_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 240
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    VariableComponent sort_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 240
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    VariableComponent sort_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    VariableComponent sort_train_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    VariableComponent sort_train_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    TextComponent sort_train_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent sort_train_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
      text = Put fruits into the PACKAGE by entering their labels as  X,X,X,X,X,X,X,X, ... ,X
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    TextComponent sort_train_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT
    TextboxComponent sort_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    TextboxComponent sort_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    TextboxComponent sort_train_compare
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
      text = Compare
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    TextboxComponent sort_train_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_1
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_2
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_3
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_4
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_5
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_6
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_7
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_8
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_9
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_10
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_11
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    ImageComponent sort_train_ex_12
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    TextboxComponent sort_train_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 240
      text = Submit
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    MouseComponent sort_train_mouse
      clickable = [sort_train_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 240
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    TextComponent sort_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 240
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    TextComponent sort_train_hint
      letterHeight = 0.03
      pos = (0.5, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 240
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    CodeComponent sort_train_setup
      Code Type = Auto->JS
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      Begin Routine:
        items = []
        frameCnt = 0
        tracePos = []
        sort_train_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: 0"

        movingItem = None
        (x, y) = sort_train_board.pos
        (w,h) = sort_train_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        frameCnt = frameCnt + 1

        if items == []:
            items = enableImageComponents(SORT_TRAINComponents,sort_train_labels,sort_train_path_base)

        movingItem = moveItem(sort_train_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_train_trace.append(j)
            tracePos = newTracePos

        if sort_train_mouse.isPressedIn(sort_train_compare):
            sort_train_compareN = sort_train_compareN + compare(sort_train_scale,sort_train_input,sort_train_labels,sort_train_scale_instr,sort_train_scale_left,sort_train_scale_right)
            sort_train_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN)

        sort_train_ans = sort_train_res.text
        sort_train_timer.text = timerWarning(sortTrainTimeL,t)
  Routine SORT_EXPL
    VariableComponent sort_expl_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent sort_expl_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent sort_expl_feedback_1
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent sort_expl_feedback_2
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent sort_expl_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. READ the feedback and CHECK the provided answer with yours

        3. CONTINUE if you are ready
    TextboxComponent sort_expl_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_compare
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Compare
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    TextboxComponent sort_expl_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_1
      pos [set every repeat] = (-0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_2
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_3
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_4
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_5
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_6
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_7
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_8
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_9
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_10
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_11
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_12
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
      text = Continue
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    MouseComponent sort_expl_mouse
      clickable = [sort_expl_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    TextComponent sort_expl_hint
      letterHeight = 0.03
      pos = (0.5, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    CodeComponent sort_expl_setup
      Code Type = Auto->JS
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      Begin Routine:
        positions = []
        for u in items:
            positions.append(u.pos)

        items = []
        frameCnt = 0
        tracePos = []
        movingItem = None

        sort_expl_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN+sort_expl_compareN)
        sort_expl_res.text = sort_train_ans
        checkSortTrainAns(sort_expl_input,sort_expl_labels,sort_expl_res.text,sort_expl_feedback_1,sort_expl_feedback_2)

        (x, y) = sort_expl_board.pos
        (w,h) = sort_expl_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        if items == []:
            items = enableImageComponents(SORT_EXPLComponents,sort_expl_labels,sort_expl_path_base)
            for i in range(len(items)):
                items[i].pos = positions[i]

        movingItem = moveItem(sort_expl_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_expl_trace.append(j)
            tracePos = newTracePos

        if sort_expl_mouse.isPressedIn(sort_expl_compare):
            sort_expl_compareN = sort_expl_compareN + compare(sort_expl_scale,sort_expl_input,sort_expl_labels,sort_expl_scale_instr,sort_expl_scale_left,sort_expl_scale_right)
            sort_expl_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN+sort_expl_compareN)

        sort_expl_timer.text = timerWarning(sortExplTimeL,t)
  Routine BACKGROUND
    VariableComponent demographic_gender
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_education
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_age
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    TextComponent background_instr
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = Please select most the fitting choice for each of the following questions
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    TextComponent gender
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your gender at birth?
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    TextboxComponent background_gender_female
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.15, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Female
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    TextboxComponent background_gender_male
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (0.15, 0.25)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Male
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    TextComponent age
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your age?
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    TextboxComponent background_age_18_24
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = 18-24
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    TextboxComponent background_age_25_34
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.3, 0.05)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = 25-34
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    TextboxComponent background_age_35_44
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.1, 0.05)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = 35-44
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    TextboxComponent background_age_45_54
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (0.1, 0.05)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = 45-54
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    TextboxComponent background_age_55_64
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (0.3, 0.05)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = 55-64
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    TextboxComponent background_age_65
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (0.5, 0.05)
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Above 65
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    TextComponent education
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is the highest degree or level of school you have completed?
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    TextboxComponent background_education_before_high_school
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (-0.75, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Less than high school
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    TextboxComponent background_education_high_school
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (-0.5, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = High school  and equivalent
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    TextboxComponent background_education_college
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (-0.25, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Some college, no degree
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    TextboxComponent background_education_bachelor
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor [set every repeat] = white
      letterHeight = 0.02
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Bachelor’s degree
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    TextboxComponent background_education_graudate
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (0.25, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Graduate or professional degree
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    TextboxComponent backgrond_education_doctorate
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (0.5, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Doctorate degree
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    TextboxComponent background_education_other
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (0.75, -0.15)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
      text = Other
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    CodeComponent background_code
      Code Type = Auto->JS
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      Begin Routine:
        age_selected = None
        education_selected = None
        gender_selected = None

        gender_groups = [background_gender_female, background_gender_male]
        age_groups = [background_age_18_24, background_age_25_34, background_age_35_44, background_age_45_54, background_age_55_64, background_age_65]
        education_groups = [background_education_before_high_school, background_education_high_school, background_education_college, background_education_bachelor, background_education_graudate, backgrond_education_doctorate, background_education_other]

        all_groups = gender_groups + age_groups + education_groups
        for g in all_groups:
            g.fillColor = white
      Each Frame:
        gender_selected = checkBGSelection(background_mouse,gender_groups,gender_selected)
        age_selected = checkBGSelection(background_mouse,age_groups,age_selected)
        education_selected = checkBGSelection(background_mouse,education_groups,education_selected)

        if age_selected != None and education_selected != None and gender_selected != None:
            if background_btn.size[0] == 0 and background_btn.size[1] == 0:
                background_btn.size = (0.28, 0.1)
            if background_btn.pos[0] == 5 and background_btn.pos[1] == 5:
                background_btn.pos = (0, -0.4)
            if age_selected != None :
                demographic_age = age_selected.text
            if education_selected != None:
                demographic_education = education_selected.text
            if gender_selected != None:
                demographic_gender = gender_selected.text
    TextboxComponent background_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (5, 5)
      saveStartStop = False
      size = (0,0)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
      text = Continue
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    MouseComponent background_mouse
      clickable = [background_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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  Routine SORT_TEST
    VariableComponent sort_test_ans
      saveStartStop = False
      startRoutineValue = ""
      startVal [time (s)] = 0
      stopVal [time (s)] = 300
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    VariableComponent sort_test_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_test_scale_instr
      color [set every repeat] = white
      letterHeight = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent sort_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits into the PACKAGE by entering their labels as  X,X,X,X,X,X,X,X, ... ,X
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    TextComponent sort_test_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT
    TextboxComponent sort_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_compare
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent sort_test_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_1
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_2
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_3
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_4
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_5
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_6
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_7
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_8
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_9
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_10
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_11
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_12
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    CodeComponent sort_test_setup
      Code Type = Auto->JS
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      Begin Routine:
        items = []
        frameCnt = 0
        tracePos = []
        movingItem = None

        (x, y) = sort_test_board.pos
        (w,h) = sort_test_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        if items == []:
            items = enableImageComponents(SORT_TESTComponents,sort_test_labels,sort_test_path_base)

        movingItem = moveItem(sort_test_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_test_trace.append(j)
            tracePos = newTracePos

        if sort_test_mouse.isPressedIn(sort_test_compare):
            sort_test_compareN = sort_test_compareN + compare(sort_test_scale,sort_test_input,sort_test_labels,sort_test_scale_instr,sort_test_scale_left,sort_test_scale_right)

        sort_test_ans = sort_test_res.text
        sort_test_timer.text = timerWarning(sortTestTimeL,t)
    TextboxComponent sort_test_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
      text = Submit
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    MouseComponent sort_test_mouse
      clickable = [sort_test_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
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    TextComponent sort_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300
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  Routine MERGE_EXPL
    TextComponent merge_expl_instr
      letterHeight = 0.03
      pos = (-0.55,0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Read the feedback and continue whenever you are ready
      wrapWidth = 0.6
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    TextComponent merge_expl_feedback_1
      letterHeight = 0.03
      pos = (-0.55,0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent merge_expl_feedback_2
      letterHeight = 0.03
      pos = (-0.55, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent merge_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.005,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent merge_expl_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (0.35, 0.25)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent merge_expl_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (0.35, -0.15)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent merge_expl_mc_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.55,0.25)
      size = (0.4,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent merge_expl_mc_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.55, -0.15)
      size = (0.4,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    CodeComponent merge_expl_setup
      Code Type = Auto->JS
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      Begin Routine:
        submitted = 2
        if "merge_train_btn_1" in merge_train_mouse.clicked_name:
            submitted = 0
        elif "merge_train_btn_2" in merge_train_mouse.clicked_name:
            submitted= 1
        showMergeExpl(submitted,merge_expl_feedback_1,merge_expl_feedback_2,merge_expl_mc_1,merge_expl_mc_2,merge_train_mc_path_1,merge_train_mc_path_2,merge_expl_1,merge_expl_2)
      Each Frame:
        merge_expl_timer.text = timerWarning(mergeExplTimeL,t)
    TextboxComponent merge_expl_btn
      autoLog = False
      bold = True
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0.35, -0.42)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 30
      text = Continue
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    MouseComponent merge_expl_mouse
      clickable = [merge_expl_btn]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 30
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    TextComponent merge_expl_timer
      color = orange
      letterHeight = 0.03
      pos = (-0.55, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
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Flow
  Routine INTRO
  Routine BACKGROUND
  Routine MERGE_INTRO
  LoopInitiator TRAIN_1 loopType="TrialHandler"
    conditionsFile = materials/merge_train_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_1.png'), ('input', ['C', 'G', 'J', 'B', 'A', 'H', 'F', 'D', 'E', 'I']), ('labels', [4, 5, 3, 9, 8, 10, 1, 7, 6, 2]), ('mc_path_1', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_1_correct.png'), ('mc_path_2', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_1_wrong.png'), ('expl_path', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_1_expl.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_1.png'), ('input', ['C', 'G', 'J', 'B', 'A', 'H', 'F', 'D', 'E', 'I']), ('labels', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_2_correct.png'), ('mc_path_1', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_2_wrong.png'), ('mc_path_2', 'materials/merge_sort/demo_imgs/merge_train/merge_train_ex_2_expl.png'), ('expl_path', None)])]
    Routine MERGE_TRAIN
    Routine MERGE_EXPL
  LoopTerminator TRAIN_1
  Routine MERGE_TEST_INTRO
  LoopInitiator TEST_1 loopType="TrialHandler"
    conditionsFile = materials/merge_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_1.png'), ('input', [6, 2])]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_2.png'), ('input', [5, 7, 8, 2, 3, 10])])]
    Routine MERGE_TEST
  LoopTerminator TEST_1
  Routine SORT_INTRO
  LoopInitiator TRAIN_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/apple'), ('input', [7, 1, 6, 3, 4, 5, 2]), ('labels', ['D', 'G', 'B', 'F', 'A', 'E', 'C'])])]
    conditionsFile = materials/sort_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TRAIN
    Routine SORT_EXPL
  LoopTerminator TRAIN_2
  Routine SORT_TEST_INTRO
  LoopInitiator TEST_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/melon'), ('input', [5, 2, 6, 7, 4, 3, 1]), ('labels', ['E', 'B', 'C', 'A', 'F', 'D', 'G'])])]
    conditionsFile = materials/sort_test_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TEST
  LoopTerminator TEST_2
  Routine DEBRIEF
