PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'Participant ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['materials\\imgs\\skip.png', 'materials\\merge_sort\\imgs\\merge_train\\optimal_merge_example.png', 'materials\\merge_sort\\imgs\\merge_train\\suboptimal_merge_example.png', 'materials\\merge_sort\\imgs\\merge_train\\optimal_merge.png', 'materials\\merge_sort\\imgs\\merge_train\\suboptimal_merge.png', 'materials\\merge_sort\\imgs\\fruits\\banana.png', 'materials\\merge_sort\\imgs\\fruits\\melon.png', 'materials\\merge_sort\\imgs\\blue_star_clicked.png', 'materials\\merge_sort\\imgs\\fruits\\apple.png', 'materials\\merge_sort\\imgs\\compare_clicked.png', 'materials\\imgs\\other_gender_selected.png', 'materials\\imgs\\prefer_not_to_say_selected.png', 'materials\\merge_sort\\imgs\\grey_BG.png', 'materials\\merge_sort\\imgs\\fruits\\apple_A.png', 'materials\\merge_sort\\imgs\\fruits\\apple_B.png', 'materials\\merge_sort\\imgs\\fruits\\apple_C.png', 'materials\\merge_sort\\imgs\\fruits\\apple_D.png', 'materials\\merge_sort\\imgs\\fruits\\apple_E.png', 'materials\\merge_sort\\imgs\\fruits\\apple_F.png', 'materials\\merge_sort\\imgs\\fruits\\apple_G.png', 'materials\\merge_sort\\imgs\\fruits\\apple_H.png', 'materials\\merge_sort\\imgs\\fruits\\apple_I.png', 'materials\\merge_sort\\imgs\\fruits\\apple_J.png', 'materials\\merge_sort\\imgs\\fruits\\apple_K.png', 'materials\\merge_sort\\imgs\\fruits\\apple_L.png', 'materials\\merge_sort\\imgs\\fruits\\banana.png', 'materials\\merge_sort\\imgs\\fruits\\banana_A.png', 'materials\\merge_sort\\imgs\\fruits\\banana_B.png', 'materials\\merge_sort\\imgs\\fruits\\banana_C.png', 'materials\\merge_sort\\imgs\\fruits\\banana_D.png', 'materials\\merge_sort\\imgs\\fruits\\banana_E.png', 'materials\\merge_sort\\imgs\\fruits\\banana_F.png', 'materials\\merge_sort\\imgs\\fruits\\banana_G.png', 'materials\\merge_sort\\imgs\\fruits\\banana_H.png', 'materials\\merge_sort\\imgs\\fruits\\banana_I.png', 'materials\\merge_sort\\imgs\\fruits\\banana_J.png', 'materials\\merge_sort\\imgs\\fruits\\banana_K.png', 'materials\\merge_sort\\imgs\\fruits\\banana_L.png', 'materials\\merge_sort\\imgs\\fruits\\melon_A.png', 'materials\\merge_sort\\imgs\\fruits\\melon_B.png', 'materials\\merge_sort\\imgs\\fruits\\melon_C.png', 'materials\\merge_sort\\imgs\\fruits\\melon_D.png', 'materials\\merge_sort\\imgs\\fruits\\melon_E.png', 'materials\\merge_sort\\imgs\\fruits\\melon_F.png', 'materials\\merge_sort\\imgs\\fruits\\melon_G.png', 'materials\\merge_sort\\imgs\\fruits\\melon_H.png', 'materials\\merge_sort\\imgs\\fruits\\melon_I.png', 'materials\\merge_sort\\imgs\\fruits\\melon_J.png', 'materials\\merge_sort\\imgs\\fruits\\melon_K.png', 'materials\\merge_sort\\imgs\\fruits\\melon_L.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct_selected.png', 'materials/merge_sort/imgs/scale_right.png', 'materials/merge_sort/imgs/scale_left.png', 'materials/merge_sort/imgs/scale_balanced.png', 'materials/imgs/other_selected.png', 'materials/imgs/male_selected.png', 'materials/imgs/less_than_high_school_selected.png', 'materials/imgs/high_school_equivalent_selected.png', 'materials/imgs/graduate_selected.png', 'materials/imgs/female_selected.png', 'materials/imgs/doctorate_selected.png', 'materials/imgs/college_selected.png', 'materials/imgs/bachelor_selected.png', 'materials/imgs/_65_selected.png', 'materials/imgs/_55_64_selected.png', 'materials/imgs/_45_54_selected.png', 'materials/imgs/_35_44_selected.png', 'materials/imgs/_25_34_selected.png', 'materials/imgs/_18_24_selected.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(0,0,0)
  expName = machine_human_learning
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Routines
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  Routine MERGE_TEST
    VariableComponent merge_test_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextComponent merge_test_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent merge_test_ans_instr
      letterHeight = 0.025
      pos = (-0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Put fruits on the CONVEYOR BELT by entering their labels one by one into the following boxes with WEIGHT INCREASING from LEFT to RIGHT
      wrapWidth = 0.9
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    TextComponent merge_test_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT

        You have 90 SECS to SUBMIT!
    TextboxComponent merge_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextboxComponent merge_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    ImageComponent merge_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    ImageComponent merge_test_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    MouseComponent merge_test_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    TextComponent merge_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90
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    CodeComponent merge_test_setup
      Code Type = JS
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      Begin JS Routine:
        merge_test_input = input;
        merge_test_labels = encryption;
        merge_test_compareN = 0;
        merge_test_compare_records = [];
        merge_test_res_boxes = [];
        merge_test_scale_left.refresh();
        merge_test_scale_right.refresh();

        routineT = 0;
        comparePressedT = 0.0;
        isComparePressed = false;

        const merge_test_mouse_btns = merge_test_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            merge_test_mouse_btns.pressed[b] = 0;
            merge_test_mouse_btns.clocks[b].reset();
            merge_test_mouse_btns.times[b] = 0.0;
        }

        for (var i = 0; i < merge_test_labels.length; i ++) {
            let newTextBox = new visual.TextBox({
                win: psychoJS.window,
                name: '' + i,
                text: '',
                font: 'Open Sans',
                pos: [(- 0.2) - (merge_test_labels.length * 0.08 / 2).toFixed(4) + i * 0.08, (- 0.3)], letterHeight: 0.04,
                size: [0.07, 0.1],  units: undefined,
                color: 'black', colorSpace: 'rgb',
                fillColor: 'white', borderColor: undefined,
                bold: false, italic: false,
                opacity: undefined,
                padding: undefined,
                editable: true,
                multiline: true,
                anchor: 'top-center',
                depth: -9.0
            });
            newTextBox.setAutoDraw(true);
            merge_test_res_boxes.push(newTextBox);
        }
      Each JS Frame:
        if (t >= 0.5 && merge_test_mouse.status === PsychoJS.Status.NOT_STARTED) {
              merge_test_mouse.tStart = t;
              merge_test_mouse.frameNStart = frameN;

              merge_test_mouse.status = PsychoJS.Status.STARTED;
              merge_test_mouse.mouseClock.reset();
              prevButtonState = merge_test_mouse.getPressed();
        }

        if ((merge_test_mouse.status === PsychoJS.Status.STARTED || merge_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_test_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (t >= 0.5 && merge_test_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_test_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_test_btn,merge_test_compare]) {
                        if (merge_test_mouse.isPressedIn(obj) && obj.name === "merge_test_btn") {
                            merge_test_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(merge_test_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "merge_test_compare") {
                                    const compareStatus = compare(merge_test_scale, merge_test_input, merge_test_labels, merge_test_compare, merge_test_scale_instr, merge_test_scale_left, merge_test_scale_right);
                                    merge_test_compareN = (merge_test_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        merge_test_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        merge_test_timer.text = timerWarning(mergeTestTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            merge_test_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        merge_test_res = [];

        for (var i = 0; i < merge_test_labels.length; i ++) {
            merge_test_res_boxes[i].setAutoDraw(false);
            merge_test_res_boxes[i].status === PsychoJS.Status.FINISHED;
            merge_test_res.push(merge_test_res_boxes[i].text);
        }
        psychoJS.experiment.addData("merge_test_res.text",merge_test_res.toString());
        psychoJS.experiment.addData("merge_test_input",merge_test_input);
        psychoJS.experiment.addData("merge_test_labels",merge_test_labels);
        psychoJS.experiment.addData("merge_test_compareN",merge_test_compareN);
        psychoJS.experiment.addData("merge_test_compare_records",merge_test_compare_records);
        psychoJS.experiment.addData("merge_test.tStart",merge_test.tStart);
        psychoJS.experiment.addData("merge_test.tEnd",routineT);

        progressBar.update("MERGE_TEST");
  Routine MERGE_TRAIN
    VariableComponent merge_train_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    VariableComponent mc_order
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_mc_path_2
      saveStartStop = False
      startRoutineValue = mc_path_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_mc_path_1
      saveStartStop = False
      startRoutineValue = mc_path_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    TextComponent merge_train_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent merge_ans_instr
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Please SELECT the CONVEYOR BELT that has the correct fruit(s) on YELLOW position(s):
      wrapWidth = 1.6
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    TextComponent merge_train_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT

        You have 90 SECS to SUBMIT!
    TextboxComponent merge_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    TextboxComponent merge_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.11)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_mc_1
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3,-0.25)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_mc_2
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3, -0.4)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_btn_1
      image = materials/imgs/submit.png
      pos = (0.5, -0.25)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_btn_2
      image = materials/imgs/submit.png
      pos = (0.5, -0.4)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    MouseComponent merge_train_mouse
      clickable = [merge_train_compare,merge_train_btn_1,merge_train_btn_2]
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    TextComponent merge_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    CodeComponent merge_train_setup
      Code Type = JS
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      Begin JS Routine:
        merge_train_input = input;
        mc_order = [];
        merge_train_compare_records = [];
        merge_train_labels = encryption;
        merge_train_compareN = 0;
        merge_train_mc_path_2 = mc_path_2;
        merge_train_mc_path_1 = mc_path_1;

        merge_train_scale_left.refresh();
        merge_train_scale_right.refresh();

        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;

        const merge_train_mouse_btns = merge_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            merge_train_mouse_btns.pressed[b] = 0;
            merge_train_mouse_btns.clocks[b].reset();
            merge_train_mouse_btns.times[b] = 0.0;
        }
      Each JS Frame:
        if ((mc_order.length === 0)) {
            mc_order = getCorrectMCOrder(TRAIN_1.thisTrialN, merge_train_mc_path_1, merge_train_mc_path_2, merge_train_mc_1, merge_train_mc_2);
        }

        if (t >= 0.5 && merge_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              merge_train_mouse.tStart = t;
              merge_train_mouse.frameNStart = frameN;

              merge_train_mouse.status = PsychoJS.Status.STARTED;
              merge_train_mouse.mouseClock.reset();
              prevButtonState = merge_train_mouse.getPressed();
        }

        if ((merge_train_mouse.status === PsychoJS.Status.STARTED || merge_train_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_train_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (t >= 0.5 && merge_train_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_train_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_train_btn_1,merge_train_btn_2,merge_train_compare]) {
                        if (merge_train_mouse.isPressedIn(obj) && (obj.name === "merge_train_btn_1" || obj.name === "merge_train_btn_2")) {
                            merge_train_mouse.clicked_name.push(obj.name);
                            merge_train_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(merge_train_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "merge_train_compare") {
                                    const compareStatus = compare(merge_train_scale, merge_train_input, merge_train_labels, merge_train_compare, merge_train_scale_instr, merge_train_scale_left, merge_train_scale_right);
                                    merge_train_compareN = (merge_train_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        merge_train_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        merge_train_timer.text = timerWarning(mergeTrainTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            merge_train_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("merge_train.tStart", merge_train.tStart);
        psychoJS.experiment.addData("mc_order",mc_order);
        psychoJS.experiment.addData("merge_train_compareN",merge_train_compareN);
        psychoJS.experiment.addData("merge_train_labels",merge_train_labels);
        psychoJS.experiment.addData("merge_train_input",merge_train_input);
        psychoJS.experiment.addData("merge_train_compare_records",merge_train_compare_records);
        psychoJS.experiment.addData("merge_train_mouse_clicked",merge_train_mouse.clicked_name);
        psychoJS.experiment.addData("merge_train.tEnd",routineT);
        progressBar.update("MERGE_TRAIN");
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  Routine MERGE_INTRO
    TextComponent intro_text_2
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        ALICE: BIZZ ... Thank you for coming to help! We have fruits in some boxes to be put on a conveyor.

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT

        LEARN the BLUE STAR operation in steps and master it.
    ImageComponent alice_2
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent blue_star_door_3
      image = materials/merge_sort/imgs/blue_star_door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent merge_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent merge_intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (merge_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            merge_intro_mouse.tStart = t;
            merge_intro_mouse.frameNStart = frameN;
            merge_intro_mouse.status = PsychoJS.Status.STARTED;
            merge_intro_mouse.mouseClock.reset();
        }
        if (((merge_intro_mouse.isPressedIn(merge_intro_btn) && (merge_intro_mouse.status === PsychoJS.Status.STARTED)) && (merge_intro_btn.status === PsychoJS.Status.STARTED))) {
            merge_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((merge_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            merge_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("merge_intro.tEnd",routineT);
        progressBar.update("MERGE_INTRO");
  Routine INTRO
    TextComponent intro_text
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Today, you will learn how to help our robot friends ALICE & BOB to package fruits for shipment.

        You will visit two warehouses "rooms", learn and perform the BLUE STAR operator and the PURPLE DIAMOND operator.

        ALICE and BOB will first help you learn these operators and then test your knowledge afterwards.
    ImageComponent alice
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent bob
      image = materials/merge_sort/imgs/bob.png
      pos = (0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent blue_star_door
      image = materials/merge_sort/imgs/blue_star_door.png
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent purple_diamond_door
      image = materials/merge_sort/imgs/purple_diamond_door.png
      pos = (0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120.0
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    CodeComponent intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            intro_mouse.tStart = t;
            intro_mouse.frameNStart = frameN;
            intro_mouse.status = PsychoJS.Status.STARTED;
            intro_mouse.mouseClock.reset();
        }
        if (((intro_mouse.isPressedIn(intro_btn) && (intro_mouse.status === PsychoJS.Status.STARTED)) && (intro_btn.status === PsychoJS.Status.STARTED))) {
            intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("intro.tEnd",routineT);
        progressBar.update("INTRO");
  Routine SORT_INTRO
    TextComponent intro_text_3
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        BOB: CLIKKKK ... SOOO GOOooD to see you!

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        LEARN the PURPLE DIAMOND with BOB and use the information provided by BOB as a reference.
    ImageComponent bob_2
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example
      image = materials/merge_sort/imgs/sort_train/sort_train_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent purple_diamond_door_3
      image = materials/merge_sort/imgs/purple_diamond_door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent sort_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent sort_intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (sort_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            sort_intro_mouse.tStart = t;
            sort_intro_mouse.frameNStart = frameN;
            sort_intro_mouse.status = PsychoJS.Status.STARTED;
            sort_intro_mouse.mouseClock.reset();
        }
        if (((sort_intro_mouse.isPressedIn(sort_intro_btn) && (sort_intro_mouse.status === PsychoJS.Status.STARTED)) && (sort_intro_btn.status === PsychoJS.Status.STARTED))) {
            sort_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;
        if ((sort_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            sort_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_intro.tEnd",routineT);
        progressBar.update("SORT_INTRO");
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
  Routine DEBRIEF
    CodeComponent submit_code
      Code Type = JS
      End JS Experiment:
        if (isCompleted) {
            window.startHTML('../backend/submission.html');
            sessionStorage.setItem("record", JSON.stringify(psychoJS.experiment._trialsData));
        }
      End JS Routine:
        const participantCode = sessionStorage.getItem("participantCode").replaceAll("\"","");
        return quitPsychoJS("Please note down your participant ID: " + participantCode
            + ". If you don’t get confirmation that the data submission was successful, "
            + "please send the downloaded file to either lun.ai15@imperial.ac.uk or "
            + "johannes-miran.langer@stud.uni-bamberg.de. "
            + "If you did get success confirmation, you can safely delete the file.", true);
  Routine MERGE_TEST_INTRO
    TextComponent intro_text_6
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        ALICE: BIZZ ... Now is time to apply the knowledge you learned about the BLUE STAR

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT
    ImageComponent alice_4
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example_2
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent blue_star_door_4
      image = materials/merge_sort/imgs/blue_star_door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_test_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent merge_test_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent merge_test_intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (merge_test_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            merge_test_intro_mouse.tStart = t;
            merge_test_intro_mouse.frameNStart = frameN;
            merge_test_intro_mouse.status = PsychoJS.Status.STARTED;
            merge_test_intro_mouse.mouseClock.reset();
        }
        if (((merge_test_intro_mouse.isPressedIn(merge_test_intro_btn) && (merge_test_intro_mouse.status === PsychoJS.Status.STARTED)) && (merge_test_intro_btn.status === PsychoJS.Status.STARTED))) {
            merge_test_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;

        if ((merge_test_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            merge_test_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("merge_test_intro.tEnd",routineT);
        progressBar.update("MERGE_TEST_INTRO");
  Routine SORT_TEST_INTRO
    TextComponent intro_text_7
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        BOB: CLIKKKK ... Now is time to apply the knowledge you learned about the PURPLE DIAMOND

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        Work through some questions on PURPLE DIAMOND but BOB would not give you information for reference this time!
    ImageComponent bob_4
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example_2
      image = materials/merge_sort/imgs/sort_train/sort_train_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent purple_diamond_door_4
      image = materials/merge_sort/imgs/purple_diamond_door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_test_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent sort_test_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent sort_test_intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (sort_test_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            sort_test_intro_mouse.tStart = t;
            sort_test_intro_mouse.frameNStart = frameN;
            sort_test_intro_mouse.status = PsychoJS.Status.STARTED;
            sort_test_intro_mouse.mouseClock.reset();
        }
        if (((sort_test_intro_mouse.isPressedIn(sort_test_intro_btn) && (sort_test_intro_mouse.status === PsychoJS.Status.STARTED)) && (sort_test_intro_btn.status === PsychoJS.Status.STARTED))) {
            sort_test_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;
        if ((sort_test_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            sort_test_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_test_intro.tEnd",routineT);
        progressBar.update("SORT_TEST_INTRO");
  Routine SORT_TRAIN
    VariableComponent sort_train_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_compare_limit
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = ms_compare
      startVal [time (s)] = 0
      stopVal [time (s)] = 300.0
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    VariableComponent sort_train_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_train_ans_instr
      letterHeight = 0.025
      pos = (-0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits on the SHIPPING CRATE by entering their labels one by one into the following boxes with WEIGHT INCREASING from LEFT to RIGHT
      wrapWidth = 0.9
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    TextComponent sort_train_instr
      letterHeight = 0.02
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED and you can move fruits freely on the MONITOR in the middle to help you arrange fruits

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        4. You can see the NUMBER OF COMPARISONS BOB uses as a reference and you have 300 SECS to SUBMIT!
    TextboxComponent sort_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent sort_train_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    TextComponent sort_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    TextComponent sort_train_hint
      color = yellow
      letterHeight = 0.04
      pos = (0.5, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    CodeComponent sort_train_setup
      Code Type = JS
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      Begin JS Routine:
        items = [];
        frameCnt = 0;
        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;
        tracePos = [];
        sort_train_input = input;
        sort_train_labels = encryption;
        sort_train_compareN = 0;
        sort_train_compare_records = [];
        sort_train_trace = [];
        sort_train_compare_limit = ms_compare;
        sort_train_path_base = img_path_base;
        sort_train_res_boxes = [];

        sort_train_scale_left.refresh();
        sort_train_scale_right.refresh();

        sort_train_hint.text = ((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: 0");
        movingItem = null;

        x = sort_train_board.getPos()[0];
        y = sort_train_board.getPos()[1];
        w = sort_train_board.getSize()[0];
        h = sort_train_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        const sort_train_mouse_btns = sort_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            sort_train_mouse_btns.pressed[b] = 0;
            sort_train_mouse_btns.clocks[b].reset();
            sort_train_mouse_btns.times[b] = 0.0;
        }

        for (var i = 0; i < sort_train_labels.length; i ++) {
            let newTextBox = new visual.TextBox({
                win: psychoJS.window,
                name: '' + i,
                text: '',
                font: 'Open Sans',
                pos: [(- 0.2) - (sort_train_labels.length * 0.08 / 2).toFixed(4) + i * 0.08, (- 0.3)], letterHeight: 0.04,
                size: [0.07, 0.1],  units: undefined,
                color: 'black', colorSpace: 'rgb',
                fillColor: 'white', borderColor: undefined,
                bold: false, italic: false,
                opacity: undefined,
                padding: undefined,
                editable: true,
                multiline: true,
                anchor: 'top-center',
                depth: -9.0
            });
            newTextBox.setAutoDraw(true);
            sort_train_res_boxes.push(newTextBox);
        }
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_TRAINComponents, sort_train_labels, sort_train_path_base, sort_train_ex_1.size[0], sort_train_board.pos[0], sort_train_board.pos[1]);
            for (var u = 0, v = items.length; (u < v); u += 1) {
                items[u].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_train_mouse.tStart = t;
              sort_train_mouse.frameNStart = frameN;

              sort_train_mouse.status = PsychoJS.Status.STARTED;
              sort_train_mouse.mouseClock.reset();
              prevButtonState = sort_train_mouse.getPressed();
        }

        if ((sort_train_mouse.status === PsychoJS.Status.STARTED || sort_train_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_train_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_train_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_train_btn,sort_train_compare]) {
                        if (sort_train_mouse.isPressedIn(obj) && obj.name === "sort_train_btn") {
                            sort_train_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_train_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_train_compare") {
                                    const sort_train_mouse_btns = sort_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
                                    for (const b of [0,1,2]){
                                        sort_train_mouse_btns.pressed[b] = 0;
                                        sort_train_mouse_btns.clocks[b].reset();
                                        sort_train_mouse_btns.times[b] = 0.0;
                                    }
                                    const compareStatus = compare(sort_train_scale, sort_train_input, sort_train_labels, sort_train_compare, sort_train_scale_instr, sort_train_scale_left, sort_train_scale_right);
                                    sort_train_compareN = (sort_train_compareN + compareStatus[0]);
                                    sort_train_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + sort_train_compareN.toString());
                                    if (compareStatus[0] !== 0) {
                                        sort_train_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_train_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_train_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }
        sort_train_timer.text = timerWarning(sortTrainTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_train_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        sort_train_res = [];

        for (var i = 0; i < sort_train_labels.length; i ++) {
            sort_train_res_boxes[i].setAutoDraw(false);
            sort_train_res_boxes[i].status === PsychoJS.Status.FINISHED;
            sort_train_res.push(sort_train_res_boxes[i].text);
        }
        psychoJS.experiment.addData("sort_train_res.text",sort_train_res.toString());
        psychoJS.experiment.addData("sort_train_input",sort_train_input);
        psychoJS.experiment.addData("sort_train_labels",sort_train_labels);
        psychoJS.experiment.addData("sort_train_trace",sort_train_trace);
        psychoJS.experiment.addData("sort_train_compareN",sort_train_compareN);
        psychoJS.experiment.addData("sort_train.tStart",sort_train_ex_1.tStart);
        psychoJS.experiment.addData("sort_train.tEnd",routineT);
        psychoJS.experiment.addData("sort_train_compare_records",sort_train_compare_records);
        progressBar.update("SORT_TRAIN");
  Routine SORT_EXPL
    VariableComponent sort_expl_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60.0
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    VariableComponent sort_expl_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent sort_expl_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_expl_feedback_1
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.18)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_feedback_2
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. READ the feedback and CHECK the provided answer with yours

        3. You can move fruits freely on the MONITOR in the middle to understand the answer and CONTINUE if you are ready

        You have 60 SECS to spare!
    TextboxComponent sort_expl_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_btn
      image = materials/imgs/continue.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    MouseComponent sort_expl_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    TextComponent sort_expl_hint
      color = yellow
      letterHeight = 0.04
      pos = (0.5, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    CodeComponent sort_expl_setup
      Code Type = JS
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      Begin JS Routine:
        positions = [];
        for (var u, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            u = _pj_a[_pj_c];
            positions.push(u.pos);
        }
        items = [];
        frameCnt = 0;
        tracePos = [];
        isComparePressed = false;
        comparePressedT = 0.0;
        movingItem = null;
        sort_expl_input = input;
        sort_expl_labels = encryption;
        sort_expl_compareN = 0;
        sort_expl_trace = [];
        sort_expl_compare_records = [];
        sort_expl_path_base = img_path_base;
        sort_expl_res_boxes = [];

        sort_expl_scale_left.refresh();
        sort_expl_scale_right.refresh();

        sort_expl_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + (sort_train_compareN + sort_expl_compareN).toString());
        checkSortTrainAns(sort_expl_input, sort_expl_labels, sort_train_res.toString(), sort_expl_feedback_1, sort_expl_feedback_2);
        x = sort_expl_board.getPos()[0];
        y = sort_expl_board.getPos()[1];
        w = sort_expl_board.getSize()[0];
        h = sort_expl_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        routineT = 0;

        const sort_expl_mouse_btns = sort_expl_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            sort_expl_mouse_btns.pressed[b] = 0;
            sort_expl_mouse_btns.clocks[b].reset();
            sort_expl_mouse_btns.times[b] = 0.0;
        }

        for (var i = 0; i < sort_expl_labels.length; i ++) {
            let newTextBox = new visual.TextBox({
                win: psychoJS.window,
                name: '' + i,
                text: sort_train_res[i],
                font: 'Open Sans',
                pos: [(- 0.2) - (sort_expl_labels.length * 0.08 / 2).toFixed(4) + i * 0.08, (- 0.3)], letterHeight: 0.04,
                size: [0.07, 0.1],  units: undefined,
                color: 'black', colorSpace: 'rgb',
                fillColor: 'white', borderColor: undefined,
                bold: false, italic: false,
                opacity: undefined,
                padding: undefined,
                editable: false,
                multiline: true,
                anchor: 'top-center',
                depth: -9.0
            });
            newTextBox.setAutoDraw(true);
            sort_expl_res_boxes.push(newTextBox);
        }
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_EXPLComponents, sort_expl_labels, sort_expl_path_base, sort_expl_ex_1.size[0], sort_expl_board.pos[0], sort_expl_board.pos[1]);
            for (var i = 0, _pj_a = items.length; (i < _pj_a); i += 1) {
                items[i].pos = positions[i];
                items[i].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_expl_mouse.tStart = t;
              sort_expl_mouse.frameNStart = frameN;

              sort_expl_mouse.status = PsychoJS.Status.STARTED;
              sort_expl_mouse.mouseClock.reset();
              prevButtonState = sort_expl_mouse.getPressed();
        }

        if ((sort_expl_mouse.status === PsychoJS.Status.STARTED || sort_expl_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_expl_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_expl_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_expl_btn,sort_expl_compare]) {
                        if (sort_expl_mouse.isPressedIn(obj) && obj.name === "sort_expl_btn") {
                            sort_expl_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_expl_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_expl_compare") {
                                    const sort_expl_mouse_btns = sort_expl_mouse.psychoJS.eventManager.getMouseInfo().buttons;
                                    for (const b of [0,1,2]){
                                        sort_expl_mouse_btns.pressed[b] = 0;
                                        sort_expl_mouse_btns.clocks[b].reset();
                                        sort_expl_mouse_btns.times[b] = 0.0;
                                    }
                                    const compareStatus = compare(sort_expl_scale, sort_expl_input, sort_expl_labels, sort_expl_compare, sort_expl_scale_instr, sort_expl_scale_left, sort_expl_scale_right);
                                    sort_expl_compareN = (sort_expl_compareN + compareStatus[0]);
                                    sort_expl_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + (sort_train_compareN + sort_expl_compareN).toString());
                                    if (compareStatus[0] !== 0) {
                                        sort_expl_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_expl_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_expl_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }
        sort_expl_timer.text = timerWarning(sortExplTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_expl_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        for (var i = 0; i < sort_expl_labels.length; i ++) {
            sort_expl_res_boxes[i].setAutoDraw(false);
            sort_expl_res_boxes[i].status === PsychoJS.Status.FINISHED;
        }
        psychoJS.experiment.addData("sort_expl_trace",sort_expl_trace);
        psychoJS.experiment.addData("sort_expl_compareN",sort_expl_compareN);
        psychoJS.experiment.addData("sort_expl_compare_records",sort_expl_compare_records);
        psychoJS.experiment.addData("sort_expl.tStart",sort_expl_ex_1.tStart);
        psychoJS.experiment.addData("sort_expl.tEnd",routineT);
        progressBar.update("SORT_EXPL");
  Routine BACKGROUND
    VariableComponent demographic_gender
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_education
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_age
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    TextComponent background_instr
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = Please select most the fitting choice for each of the following questions
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    TextComponent gender
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your gender?
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    ImageComponent prefer_not_to_say
      image = materials/imgs/prefer_not_to_say.png
      pos = (0.3, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent other_gender
      image = materials/imgs/other_gender.png
      pos = (0.1, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent female
      image = materials/imgs/female.png
      pos = (-0.3, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent male
      image = materials/imgs/male.png
      pos = (-0.1, 0.2)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    TextComponent age
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your age?
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    ImageComponent _18_24
      image = materials/imgs/_18_24.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _25_34
      image = materials/imgs/_25_34.png
      pos = (-0.3, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _35_44
      image = materials/imgs/_35_44.png
      pos = (-0.1, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _45_54
      image = materials/imgs/_45_54.png
      pos = (0.1, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _55_64
      image = materials/imgs/_55_64.png
      pos = (0.3, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _65
      image = materials/imgs/_65.png
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    TextComponent education
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is the highest degree or level of school you have completed?
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    ImageComponent less_than_high_school
      image = materials/imgs/less_than_high_school.png
      pos = (-0.75, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent high_school_equivalent
      image = materials/imgs/high_school_equivalent.png
      pos = (-0.5, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent college
      image = materials/imgs/college.png
      pos = (-0.25, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent bachelor
      image = materials/imgs/bachelor.png
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent graduate
      image = materials/imgs/graduate.png
      pos = (0.25, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent doctorate
      image = materials/imgs/doctorate.png
      pos = (0.5, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent other
      image = materials/imgs/other.png
      pos = (0.75, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent background_btn
      image = materials/imgs/waiting.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.24, 0.1)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent background_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent background_code
      Code Type = JS
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      Begin JS Routine:
        age_selected = null;
        education_selected = null;
        gender_selected = null;
        gender_groups = [female, male, other_gender, prefer_not_to_say];
        age_groups = [_18_24, _25_34, _35_44, _45_54, _55_64, _65];
        education_groups = [less_than_high_school, high_school_equivalent, college, bachelor, graduate, doctorate, other];
        routineT = 0;
      Each JS Frame:
        gender_selected = checkBGSelection(background_mouse, gender_groups, gender_selected);
        age_selected = checkBGSelection(background_mouse, age_groups, age_selected);
        education_selected = checkBGSelection(background_mouse, education_groups, education_selected);
        if ((age_selected !== null)) {
            demographic_age = age_selected.name;
        }
        if ((education_selected !== null)) {
            demographic_education = education_selected.name;
        }
        if ((gender_selected !== null)) {
            demographic_gender = gender_selected.name;
        }
        if (((((age_selected !== null) && (education_selected !== null)) && (gender_selected !== null)) && (background_btn.image !== "materials/imgs/submit.png"))) {
            background_btn.image = "materials/imgs/submit.png";
        }
        if (((((background_mouse.isPressedIn(background_btn) && (age_selected !== null)) && (education_selected !== null)) && (gender_selected !== null)) && (background_btn.status === PsychoJS.Status.STARTED))) {
            background_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }

        if ((background_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            background_mouse.status = PsychoJS.Status.FINISHED;
        }

        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData('demographic_age',demographic_age);
        psychoJS.experiment.addData('demographic_education',demographic_education);
        psychoJS.experiment.addData('demographic_gender',demographic_gender);
        psychoJS.experiment.addData("background.tEnd",routineT);
        progressBar.update("BACKGROUND");
  Routine SORT_TEST
    VariableComponent sort_test_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_test_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_test_ans_instr
      letterHeight = 0.025
      pos = (-0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits on the SHIPPING CRATE by entering their labels one by one into the following boxes with WEIGHT INCREASING from LEFT to RIGHT
      wrapWidth = 0.9
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    TextComponent sort_test_instr
      letterHeight = 0.02
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED and you can move fruits freely on the MONITOR in the middle help you arrange fruits

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        You have 300 SECS to SUBMIT!
    TextboxComponent sort_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
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    ImageComponent sort_test_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent sort_test_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
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    TextComponent sort_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300
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    CodeComponent sort_test_setup
      Code Type = JS
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      Begin JS Routine:
        items = [];
        frameCnt = 0;
        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;
        tracePos = [];
        movingItem = null;
        sort_test_input = input;
        sort_test_labels = encryption;
        sort_test_compareN = 0;
        sort_test_trace = [];
        sort_test_compare_records = [];
        sort_test_compare_limit = ms_compare;
        sort_test_path_base = img_path_base;
        sort_test_res_boxes = [];

        sort_test_scale_left.refresh();
        sort_test_scale_right.refresh();

        x = sort_test_board.getPos()[0];
        y = sort_test_board.getPos()[1];
        w = sort_test_board.getSize()[0];
        h = sort_test_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        const sort_test_mouse_btns = sort_test_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            sort_test_mouse_btns.pressed[b] = 0;
            sort_test_mouse_btns.clocks[b].reset();
            sort_test_mouse_btns.times[b] = 0.0;
        }

        for (var i = 0; i < sort_test_labels.length; i ++) {
            let newTextBox = new visual.TextBox({
                win: psychoJS.window,
                name: '' + i,
                text: '',
                font: 'Open Sans',
                pos: [(- 0.2) - (sort_test_labels.length * 0.08 / 2).toFixed(4) + i * 0.08, (- 0.3)], letterHeight: 0.04,
                size: [0.07, 0.1],  units: undefined,
                color: 'black', colorSpace: 'rgb',
                fillColor: 'white', borderColor: undefined,
                bold: false, italic: false,
                opacity: undefined,
                padding: undefined,
                editable: true,
                multiline: true,
                anchor: 'top-center',
                depth: -9.0
            });
            newTextBox.setAutoDraw(true);
            sort_test_res_boxes.push(newTextBox);
        }
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_TESTComponents, sort_test_labels,
                sort_test_path_base, sort_test_ex_1.size[0], sort_test_board.pos[0], sort_test_board.pos[1]);
            for (var i = 0, _pj_a = items.length; (i < _pj_a); i += 1) {
                items[i].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_test_mouse.tStart = t;
              sort_test_mouse.frameNStart = frameN;

              sort_test_mouse.status = PsychoJS.Status.STARTED;
              sort_test_mouse.mouseClock.reset();
              prevButtonState = sort_test_mouse.getPressed();
        }

        if ((sort_test_mouse.status === PsychoJS.Status.STARTED || sort_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_test_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_test_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_test_btn,sort_test_compare]) {
                        if (sort_test_mouse.isPressedIn(obj) && obj.name === "sort_test_btn") {
                            sort_test_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_test_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_test_compare") {
                                    const sort_test_mouse_btns = sort_test_mouse.psychoJS.eventManager.getMouseInfo().buttons;
                                    for (const b of [0,1,2]){
                                        sort_test_mouse_btns.pressed[b] = 0;
                                        sort_test_mouse_btns.clocks[b].reset();
                                        sort_test_mouse_btns.times[b] = 0.0;
                                    }
                                    const compareStatus = compare(sort_test_scale, sort_test_input, sort_test_labels, sort_test_compare, sort_test_scale_instr, sort_test_scale_left, sort_test_scale_right);
                                    sort_test_compareN = (sort_test_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        sort_test_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_test_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_test_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }

        sort_test_timer.text = timerWarning(sortTestTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_test_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        sort_test_res = [];

        for (var i = 0; i < sort_test_labels.length; i ++) {
            sort_test_res_boxes[i].setAutoDraw(false);
            sort_test_res_boxes[i].status === PsychoJS.Status.FINISHED;
            sort_test_res.push(sort_test_res_boxes[i].text);
        }
        psychoJS.experiment.addData("sort_test_res.text",sort_test_res.toString());
        psychoJS.experiment.addData("sort_test_input",sort_test_input);
        psychoJS.experiment.addData("sort_test_labels",sort_test_labels);
        psychoJS.experiment.addData("sort_test_trace",sort_test_trace);
        psychoJS.experiment.addData("sort_test_compare_records",sort_test_compare_records);
        psychoJS.experiment.addData("sort_test_compareN",sort_test_compareN);
        psychoJS.experiment.addData("sort_test.tStart",sort_test_ex_1.tStart);
        psychoJS.experiment.addData("sort_test.tEnd",routineT);
        progressBar.update("SORT_TEST");
  Routine MERGE_EXPL
    TextComponent merge_expl_initial_state
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.625,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every repeat] = Initial state
      wrapWidth = 0.6
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    TextComponent merge_expl_feedback
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.375,0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      wrapWidth = 0.8
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    TextComponent merge_expl_feedback_1
      letterHeight = 0.035
      pos = (-0.15,0.12)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    TextComponent merge_expl_feedback_2
      letterHeight = 0.035
      pos = (-0.15, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_ex
      image [set every repeat] = $img_path
      pos = (-0.625,0.05)
      size = (0.4,0.2)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.375, 0)
      saveStartStop = False
      size = (0.005,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    ImageComponent merge_expl_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      opacity = 0
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      opacity = 0
      pos = (0.45, -0.15)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_mc_1
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.15,0.25)
      size = (0.3,0.075)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_mc_2
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.15, -0.15)
      size = (0.3,0.075)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_btn
      image = materials/imgs/continue.png
      pos = (0.35, -0.42)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    MouseComponent merge_expl_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    TextComponent merge_expl_timer
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.375, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60.0
      text [set every repeat] = Read the feedback and continue whenever you are ready (60 SECS)
      wrapWidth = 0.5
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    CodeComponent merge_expl_setup
      Code Type = JS
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      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        submitted = 2;
        if (_pj.in_es6("merge_train_btn_1", merge_train_mouse.clicked_name)) {
            submitted = 0;
        } else {
            if (_pj.in_es6("merge_train_btn_2", merge_train_mouse.clicked_name)) {
                submitted = 1;
            }
        }
        if (showMergeExpl(submitted, merge_expl_feedback_1, merge_expl_feedback_2, merge_expl_mc_1, merge_expl_mc_2, merge_train_mc_path_1, merge_train_mc_path_2, merge_expl_1, merge_expl_2)){
            merge_expl_feedback.text = "You answer is CORRECT!";
            merge_expl_feedback.color = green;
        } else {
            if (submitted !== 2) {
                merge_expl_feedback.text = "You answer is WRONG!";
                merge_expl_feedback.color = red;
            }
        }

        routineT = 0;
      Each JS Frame:
        const timerString = timerWarning(mergeExplTimeL, t);
        if (timerString !== "") {
            merge_expl_timer.text = timerString;
            merge_expl_timer.color = "orange";
        }

        if (t >= 0.5 && merge_expl_mouse.status === PsychoJS.Status.NOT_STARTED) {
              merge_expl_mouse.tStart = t;
              merge_expl_mouse.frameNStart = frameN;

              merge_expl_mouse.status = PsychoJS.Status.STARTED;
              merge_expl_mouse.mouseClock.reset();
              prevButtonState = merge_expl_mouse.getPressed();
        }

        if ((merge_expl_mouse.status === PsychoJS.Status.STARTED || merge_expl_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_expl_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (merge_expl_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_expl_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_expl_btn]) {
                        if (merge_expl_mouse.isPressedIn(obj) && (obj.name === "merge_expl_btn")) {
                            merge_expl_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        }
                    }
                }
            }
        }

        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("merge_expl.tStart",merge_expl_mc_1.tStart);
        psychoJS.experiment.addData("merge_expl.tEnd",routineT);
        progressBar.update("MERGE_EXPL");
  Routine HINT
    TextComponent intro_text_8
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = *** What ALICE teaches you about the BLUE STAR might help you better learn and work through BOB's PURPLE DIAMOND ***
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    ImageComponent arrow
      image = materials/imgs/arrow.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent alice_5
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.3, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent bob_5
      image = materials/merge_sort/imgs/bob.png
      pos = (0.3, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent blue_star_door_2
      image = materials/merge_sort/imgs/blue_star_door.png
      pos = (-0.5, 0.2)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent purple_diamond_door_2
      image = materials/merge_sort/imgs/purple_diamond_door.png
      pos = (0.5, 0.2)
      saveStartStop = False
      size = (0.15, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent hint_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent hint_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120.0
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    CodeComponent hint_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (hint_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            hint_mouse.tStart = t;
            hint_mouse.frameNStart = frameN;
            hint_mouse.status = PsychoJS.Status.STARTED;
            hint_mouse.mouseClock.reset();
        }
        if (((hint_mouse.isPressedIn(intro_btn) && (hint_mouse.status === PsychoJS.Status.STARTED)) && (hint_btn.status === PsychoJS.Status.STARTED))) {
            hint_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((hint_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            hint_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("hint.tEnd",routineT);
        progressBar.update("HINT");
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  Routine REVIEW_QUESTIONS
    TextComponent review_question
      letterHeight = 0.03
      pos [set every repeat] = [-0.45, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      wrapWidth = 0.7
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    ImageComponent review_img_1
      image [set every repeat] = $img_path1
      pos [set every repeat] = (0.4, 0.25)
      saveStartStop = False
      size = (0.7, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    ImageComponent review_img_2
      image [set every repeat] = $img_path2
      pos [set every repeat] = (0.4,-0.15)
      saveStartStop = False
      size = (0.7, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    ImageComponent review_btn
      image = materials/imgs/continue.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 180
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    TextboxComponent review_res
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.45, -0.35)
      saveStartStop = False
      size = (0.7,0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 180
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    MouseComponent review_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 180
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    TextComponent review_timer
      color = orange
      letterHeight = 0.03
      pos = (-0.45, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      wrapWidth = 0.7
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    CodeComponent review_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;

        review_question.text = r_question;
        review_res.refresh();

        if (REVIEW.thisTrialN < 2) {
            review_img_1.pos = [0.4,0.1];
            review_img_2.pos = [0.4,0.1];
        } else if (REVIEW.thisTrialN === 3) {
        }
      Each JS Frame:
        if (((t >= 0.5) && (review_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            review_mouse.tStart = t;
            review_mouse.frameNStart = frameN;
            review_mouse.status = PsychoJS.Status.STARTED;
            review_mouse.mouseClock.reset();
        }
        if (((review_mouse.isPressedIn(review_btn) && (review_mouse.status === PsychoJS.Status.STARTED)) && (review_btn.status === PsychoJS.Status.STARTED))) {
            review_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((review_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            review_mouse.status = PsychoJS.Status.FINISHED;
        }

        review_timer.text = timerWarning(reviewTimeL, t);
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("review.tEnd",routineT);
        progressBar.update("REVIEW");
  Routine CONSENT
    TextComponent consent
      color = yellow
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
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      text:
        Your answers will be stored ANONYMOUSLY and you will not be asked for any information that can be used to identify you. Your participation in this study is completely VOLUNTARY and you can WITHDRAW at any time by PRESSING the ESC key TWICE.

        By clicking “I agree” below you are indicating that you are AT LEAST 18 YEARS OLD, have read and understood this consent form and agree to participate in this research study.
    SliderComponent consent_check
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = ["I agree","Exit"]
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 180.0
      storeRatingTime = False
      styles = radio
      ticks = [1,2]
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    CodeComponent consent_code
      Code Type = JS
      Before JS Experiment:
        expInfo['Participant ID'] = sessionStorage.getItem("participantCode").replaceAll("\"","");

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        const sleepTime = 0.2;
        const green = [(- 0.0039), 1.0, (- 1.0)];
        const red = [1.0, (- 0.2235), (- 0.4431)];
        const white = [1.0, 1.0, 1.0];
        const traceSaveAtFrame = 20;

        const introTimeL = 120;
        const mergeTestTimeL = 90;
        const mergeTrainTimeL = 90;
        const mergeExplTimeL = 60;
        const sortTestTimeL = 300;
        const sortTrainTimeL = 300;
        const sortExplTimeL = 60;
        const reviewTimeL = 180;
        const expCheckTimeL = 300;
        const preTestTimeL = 30;
        const preTestTotalTimeL = 480;

        var routineT = 0;
        var comparePressedT = 0.0;
        var isComparePressed = false;
        var preTestTime = 0;
        var progressBar;
        var preTestTrainCorrectCnt = 0;

        const scaleEqPath = "materials/merge_sort/imgs/scale_balanced.png";
        const scaleLtPath = "materials/merge_sort/imgs/scale_right.png";
        const scaleGtPath = "materials/merge_sort/imgs/scale_left.png";

        var expSetup = {
                    "BACKGROUND": [introTimeL, 1],
                    "INTRO": [introTimeL, 1],
                    "HINT": [introTimeL, 1],
                    "PRE_TEST_INTRO": [introTimeL, 1],
                    "PRE_TEST": [preTestTotalTimeL, 1],
                    "MERGE_INTRO": [introTimeL, 1],
                    "SORT_INTRO": [introTimeL, 1],
                    "MERGE_TEST_INTRO": [introTimeL, 1],
                    "SORT_TEST_INTRO": [introTimeL, 1],
                    "EXP_CHECK": [expCheckTimeL, 1],
                    "REVIEW": [reviewTimeL, 4],
                    "MERGE_TRAIN": [mergeTrainTimeL,6],
                    "SORT_TRAIN": [sortTrainTimeL,4],
                    "MERGE_EXPL": [mergeExplTimeL,6],
                    "SORT_EXPL": [sortExplTimeL,4],
                    "MERGE_TEST": [mergeTestTimeL,5],
                    "SORT_TEST": [sortTestTimeL,8]
                };

        class ProgressBar {

            // routine dict entry: [routineTime, routineRepeat]

            constructor (routines) {

                this.currentProgress = 0;
                this.totalTime = 0;
                this.routines = {};
                this.name = null;
                this.percent = null;
                this.bar = null;
                this.progress = null;
                this.window = psychoJS.window;
                this.routines = routines;
                this.barWidth = 1.2;
                this.barHeight = 0.05;
                this.textXPos = 0.37;
                this.textYPos = 0.48;
                this.barXPos = 0.0;
                this.barYPos = 0.48;
                this.fontSize = 0.02;

                for (var key in this.routines){
                    this.totalTime += this.routines[key][0] * this.routines[key][1];
                }
                this.name = new visual.TextStim({
                    win: this.window,
                    name: 'progress',
                    text: 'Progress',
                    font: 'Open Sans',
                    pos: [-this.textXPos, this.textYPos], height: this.fontSize,
                    color: new util.Color('white')
                });
                this.name.setAutoDraw(true);
                this.percent = new visual.TextStim({
                    win: this.window,
                    name: 'precent',
                    text: '0%',
                    font: 'Open Sans',
                    pos: [this.textXPos, this.textYPos], height: this.fontSize,
                    color: new util.Color('white')
                });
                this.percent.setAutoDraw(true);
                this.progress = new visual.Rect({
                   win: this.window,
                   name: "progress",
                   units: undefined,
                   pos: [0, this.barYPos],
                   size: [0, this.barHeight],
                   fillColor: new util.Color('black')
                });
                this.progress.setAutoDraw(true);
                this.bar = new visual.Rect({
                   win: this.window,
                   name: "bar",
                   units: undefined,
                   pos: [this.barXPos, this.barYPos],
                   size: [this.barWidth, this.barHeight],
                   fillColor: new util.Color('white')
                });
                this.bar.setAutoDraw(true);
            }

            update(routineName) {
                this.currentProgress += this.routines[routineName][0];
                let p = 0 + (this.currentProgress / this.totalTime).toFixed(2);
                this.progress.size = [p * this.barWidth, this.barHeight];
                this.progress.pos = [this.barXPos - 0.25 * (1 - p) * this.barWidth, this.barYPos];
                this.percent.text = Math.min((p * 100).toFixed(0), 100) + "%";
            }

            hide() {
                this.name.opacity = 0.0;
                this.percent.opacity = 0.0;
                this.bar.opacity = 0.0;
                this.progress.opacity = 0.0;
            }

            show() {
                this.name.opacity = 1.0;
                this.percent.opacity = 1.0;
                this.bar.opacity = 1.0;
                this.progress.opacity = 1.0;
            }
        }

        function moveItem(mouse, grabbed) {
            var u, v;
            if (((grabbed !== null) && mouse.isPressedIn(grabbed))) {
                [u, v] = mouse.getPos();
                if (((((left <= u) && (u <= right)) && (bot <= v)) && (v <= top))) {
                    grabbed.pos = [u, v];
                }
                return grabbed;
            } else {
                for (var item, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    item = _pj_a[_pj_c];
                    if ((mouse.isPressedIn(item) && (grabbed !== item))) {
                        return item;
                    }
                }
            }
            return grabbed;
        }
        function comparePickedItems(values, labels, leftInput, rightInput) {
            var leftIdx, leftValue, rightIdx, rightValue;
            if (((leftInput.text.length === 0) || (rightInput.text.length === 0))) {
                return [1,"",""];
            } else {
                if (((leftInput.text.length > 1) || (rightInput.text.length > 1))) {
                    return [2,"",""];
                } else {
                    if (((_pj.in_es6("'"+leftInput.text + "'", labels) === false) || (_pj.in_es6("'"+rightInput.text + "'", labels)) === false)) {
                        return [3,"",""];
                    }
                }
            }
            leftIdx = labels.indexOf("'"+leftInput.text + "'");
            rightIdx = labels.indexOf("'"+rightInput.text + "'");
            leftValue = parseInt(values[leftIdx]);
            rightValue = parseInt(values[rightIdx]);
            if ((leftValue > rightValue)) {
                return [4,leftInput.text,rightInput.text];
            } else {
                if ((leftValue < rightValue)) {
                    return [5,leftInput.text,rightInput.text];
                } else {
                    return [6,leftInput.text,rightInput.text];
                }
            }
        }
        function timeSleep(T) {
            var u;
            u = 0;
            for (var i = 0, _pj_a = Number.parseInt((1000000 * T)); (i < _pj_a); i += 1) {
                u = (u + 1);
            }
        }

        function compare(scale, listValues, labels, compareBtn, instr, scaleLeft, scaleRight) {
            var state;
            state = comparePickedItems(listValues, labels, scaleLeft, scaleRight);
            timeSleep(sleepTime);
            if ((state[0] > 3)) {
                instr.color = green;
                instr.height = 0.05;
                if ((state[0] === 4)) {
                    instr.text = state[1] + " > " + state[2];
                    scale.image = scaleGtPath;
                } else {
                    if ((state[0] === 5)) {
                        instr.text = state[1] + " < " + state[2];
                        scale.image = scaleLtPath;
                    } else {
                        instr.text = state[1] + " = " + state[2];
                        scale.image = scaleEqPath;
                    }
                }
                compareBtn.image = "materials/merge_sort/imgs/compare_clicked.png";
                return [1,state[1],state[2]];
            } else {
                if ((state[0] === 1)) {
                    instr.text = "Please provide labels in correct format for both LHS and RHS";
                    instr.color = red;
                    instr.height = 0.02;
                } else {
                    if ((state[0] === 2)) {
                        instr.text = "Please enter labels as single capitals";
                        instr.color = red;
                        instr.height = 0.02;
                    } else {
                        if ((state[0] === 3)) {
                            instr.text = "Please enter an existing item";
                            instr.color = red;
                            instr.height = 0.02;
                        }
                    }
                }
            }
            return [0,state[1],state[2]];
        }

        function checkSortTrainAns(input, labels, res, feedback_1, feedback_2) {
            var correct, correctValues, submitted, values;
            const inputValues = input.map(x=>parseInt(x));
            correct = getSortTrace(inputValues, labels);
            submitted = res.replace(" ", "");
            values = res.replace(",", "");
            correctValues = correct.replace(",", "");
            if ((submitted === correct)) {
                feedback_1.text = "Your answer is CORRECT!";
                feedback_1.color = green;
                feedback_2.text = "";
            } else {
                if ((values === correctValues)) {
                    feedback_1.text = "Your answer does not have the correct format!\n";
                    feedback_1.color = red;
                    feedback_2.text = ("The correct answer is >>>>\n[" + correct.replaceAll(",","]-[") + "]");
                    feedback_2.color = green;
                } else {
                    feedback_1.text = "Your answer is WRONG!";
                    feedback_1.color = red;
                    feedback_2.text = ("The correct answer is >>>>\n[" + correct.replaceAll(",","]-[") + "]");
                    feedback_2.color = green;
                }
            }
        }
        function getSortTrace(input, labels) {
            var sublistLabels, sublists, temp;
            temp = [];
            for (var i, _pj_c = 0, _pj_a = input, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                temp.push([i]);
            }
            while ((temp.length > 1)) {
                sublists = [];
                for (var i = 0, _pj_a = Number.parseInt((temp.length / 2)); (i < _pj_a); i += 1) {
                    const l = temp[(i * 2)].concat(temp[((i * 2) + 1)]);
                    l.sort(function(k,m){return k-m});
                    sublists.push(l);
                }
                if (((temp.length % 2) === 1)) {
                    temp = sublists.concat([temp.slice((- 1))[0]]);
                } else {
                    temp = sublists;
                }
            }
            sublistLabels = "";
            for (var i = 0, _pj_a = temp.length; (i < _pj_a); i += 1) {
                for (var j = 0, _pj_b = temp[i].length; (j < _pj_b); j += 1) {
                    sublistLabels = (sublistLabels + labels[input.indexOf(temp[i][j])][1]);
                    if (((i < (temp.length - 1)) || (j < (temp[i].length - 1)))) {
                        sublistLabels = (sublistLabels + ",");
                    }
                }
            }
            return sublistLabels;
        }
        function enableImageComponents(components, labels, imagePathBase, sizeX, centreX, centreY) {
            var enabledComponents, exId, i, imageIdx;
            enabledComponents = [];
            i = 0;
            for (var component, _pj_c = 0, _pj_a = components, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                component = _pj_a[_pj_c];
                if ((component instanceof visual.ImageStim)) {
                    exId = component.name.split("_").slice((- 2));
                    if ((exId.slice((- 2))[0] === "ex")) {
                        imageIdx = exId.slice((- 1))[0];
                        if ((Number.parseInt(imageIdx) > labels.length)) {
                            component.image = "materials/merge_sort/imgs/white_BG.png";
                        } else {
                            component.image = (((imagePathBase + "_") + labels[i].charAt(1)) + ".png");
                            component.pos = [centreX - ((labels.length - 1) * 0.05 / 2).toFixed(4) + enabledComponents.length * 0.05, centreY];
                            enabledComponents.push(component);
                            i += 1;
                        }
                    }
                }
            }
            return enabledComponents;
        }
        function getCorrectMCOrder(N, path1, path2, img1, img2) {
            var order, rand_seq;
            rand_seq = [0, 1, 1, 1, 0, 0, 0, 1, 0, 1, 1, 0, 1, 0, 0, 0, 1, 0, 1, 1, 0, 0, 1, 0, 0, 1, 0, 1, 1, 1];
            order = [rand_seq[(N)], (1 - rand_seq[(N)])];
            if ((((path1.split("_").slice((- 1))[0] === "wrong.png") && (path2.split("_").slice((- 1))[0] === "correct.png")) || ((path2.split("_").slice((- 1))[0] === "wrong.png") && (path1.split("_").slice((- 1))[0] === "correct.png")))) {
                if ((order[0] === 1 && order[1] === 0)) {
                    img1.image = path1;
                    img2.image = path2;
                } else {
                    img1.image = path2;
                    img2.image = path1;
                }
                return order;
            } else {
                throw new ValueError("Training multiple choice setup is incorrect!");
            }
        }
        function showMergeExpl(submitted, feedback1, feedback2, mc1, mc2, mcPath1, mcPath2, expl1, expl2) {
            feedback1.text = "";
            feedback2.text = "";
            if ((submitted === 0)) {
                feedback1.text = "SELECTED >>> \n";
            } else {
                if ((submitted === 1)) {
                    feedback2.text = "SELECTED >>> \n";
                }
            }
            if ((mc_order[0] === 1 && mc_order[1] === 0)) {
                feedback1.color = green;
                feedback2.color = red;
                feedback1.text = (feedback1.text + "This answer is CORRECT!");
                feedback2.text = (feedback2.text + "This answer is WRONG!");
                mc1.image = (mcPath1.split(".png")[0] + "_selected.png");
                mc2.image = (mcPath2.split(".png")[0] + "_selected.png");
                expl1.image = (mcPath1.split(".png")[0] + "_expl.png");
                expl2.image = (mcPath2.split(".png")[0] + "_expl.png");
                return submitted === 0
            } else {
                feedback1.color = red;
                feedback2.color = green;
                feedback1.text = (feedback1.text + "This answer is WRONG!");
                feedback2.text = (feedback2.text + "This answer is CORRECT!");
                mc1.image = (mcPath2.split(".png")[0] + "_selected.png");
                mc2.image = (mcPath1.split(".png")[0] + "_selected.png");
                expl1.image = (mcPath2.split(".png")[0] + "_expl.png");
                expl2.image = (mcPath1.split(".png")[0] + "_expl.png");
                return submitted === 1
            }
        }
        function checkBGSelection(m, groups, picked) {
            for (var item, _pj_c = 0, _pj_a = groups, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                item = _pj_a[_pj_c];
                if (((m !== null) && m.isPressedIn(item))) {
                    for (var others, _pj_f = 0, _pj_d = groups, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        others = _pj_d[_pj_f];
                        others.image = (("materials/imgs/" + others.name) + ".png");
                    }
                    item.image = (("materials/imgs/" + item.name) + "_selected.png");
                    timeSleep(sleepTime);
                    return item;
                }
            }
            return picked;
        }

        function timerWarningRemain(timeLimt, timePassed, remain) {
            var tRemain;
            tRemain = Number.parseInt((timeLimt - timePassed));
            if ((tRemain <= remain)) {
                if (tRemain >= 0) {
                    return ("Remain time sec: " + tRemain.toString());
                } else {
                    return ("Remain time sec: " + 0);
                }
            } else {
                return "";
            }
        }

        function timerWarning(timeLimt, timePassed) {
            return timerWarningRemain(timeLimt, timePassed, 30);
        }

        function updateTrace(itemPos, newItemPos) {
            var updated;
            updated = [];
            for (var i, _pj_c = 0, _pj_a = itemPos, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                for (var j, _pj_f = 0, _pj_d = newItemPos, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    j = _pj_d[_pj_f];
                    if (((i[0] === j[0]) && (! ((i[1] === j[1]) && (i[2] === j[2]))))) {
                        updated.push(j);
                    }
                }
            }
            return updated;
        }
      Begin JS Experiment:
          window.startHTML = (src) => {
              $('body').append('<iframe id="iframe" src="' + src +'" style="width: 100%; height: 100%; position:absolute;z-index:1;top:0;left:0;border:0;"></iframe>');
              window.finishedHTML = false;
          };

          window.finishHTML = () => {
              $('#iframe').remove();
              window.finishedHTML = true;
           };
        progressBar = new ProgressBar(expSetup);
      Each JS Frame:
        if (consent_check.markerPos !== undefined) {
            psychoJS.experiment.addData("consent",consent_check.getMarkerPos() === 1);
            if (consent_check.getMarkerPos() === 2) {
                return quitPsychoJS('The experiment was terminated!', false);
            }
            continueRoutine = false;
        }

        if (parseInt(expInfo["participant"]) === NaN && parseInt(expInfo["participant"]) % 4 !== 0) {
            return quitPsychoJS('Wrong ID was given!', false);
        }
      End JS Routine:
        if (consent_check.markerPos === undefined) {
            psychoJS.experiment.addData("consent",false);
            return quitPsychoJS('The experiment was terminated!', false);
        }
  Routine PRE_TEST_INTRO
    TextComponent pre_test_intro
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120.0
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      text:
        In the following section, you will be shown 3x3 tiles containing patterns of shapes.

        They relate to each other in one or more of these aspects: colour, size, position and shape. CHOOSE one of the 4 provided options that will correctly complete the 3x3 tiles.

        There will be practice at the beginning followed by a test with harder questions. Try to answer as many as you can!
    ImageComponent pre_test_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent pre_test_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent pre_test_intro_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (pre_test_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            pre_test_intro_mouse.tStart = t;
            pre_test_intro_mouse.frameNStart = frameN;
            pre_test_intro_mouse.status = PsychoJS.Status.STARTED;
            pre_test_intro_mouse.mouseClock.reset();
        }
        if (((pre_test_intro_mouse.isPressedIn(pre_test_intro_btn) && (pre_test_intro_mouse.status === PsychoJS.Status.STARTED)) && (pre_test_intro_btn.status === PsychoJS.Status.STARTED))) {
            pre_test_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((pre_test_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            pre_test_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("pre_test_intro_mouse.tEnd",routineT);
        progressBar.update("PRE_TEST_INTRO");
  Routine PRE_TEST
    ImageComponent pre_test_item
      image [set every repeat] = $img_path
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 30.0
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    ImageComponent pre_test_whitescreen
      image [set every repeat] = materials\merge_sort\imgs\white_BG.png
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.6
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    ImageComponent pre_test_fixation
      image [set every repeat] = materials\imgs\MaRs_IB\fixation.png
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    SliderComponent pre_test_slider
      borderColor = white
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.48, 0.04)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 30.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    MouseComponent pre_test_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30.0
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    TextComponent pre_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30.0
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    TextComponent pre_test_instr
      letterHeight = 0.03
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30.0
      wrapWidth = 0.4
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      text:
        The 3x3 tiles relate to each other in one or more of these aspects:

        colour, size, position and shape.

        CHOOSE one of the 4 provided options (A/B/C/D) that will correctly complete the tiles by REPLACING the "?".

        You have 30 SECS for each question!
    TextComponent pre_test_counter
      letterHeight = 0.03
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30.0
      text = Test question
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    TextComponent pre_test_mark
      color = black
      letterHeight = 0.1
      pos = (0.15, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 30.0
      text [set every repeat] = ?
      wrapWidth = 0.4
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    CodeComponent pre_test_code
      Code Type = JS
      Begin JS Routine:
        item_image_path = img_path;
        itemLabels = ["a","b","c","d"];
        selected = null;
        selectedTime = 0.0;
        pre_test_slider.setReadOnly(false);
      Each JS Frame:
        if (t >= 0.6 && pre_test_mouse.status === PsychoJS.Status.NOT_STARTED) {
              pre_test_mouse.tStart = t;
              pre_test_mouse.frameNStart = frameN;

              pre_test_mouse.status = PsychoJS.Status.STARTED;
              pre_test_mouse.mouseClock.reset();
              prevButtonState = pre_test_mouse.getPressed();
        }

        if ((pre_test_mouse.status === PsychoJS.Status.STARTED
        || pre_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              pre_test_mouse.status = PsychoJS.Status.FINISHED;
        }

        pre_test_timer.text = timerWarningRemain(preTestTimeL, t, 5);

        if (t >= 0.6 && pre_test_slider.markerPos !== undefined) {
            if (selected === null) {
                selected = pre_test_slider.getMarkerPos();
                selectedTime = t;
            } else {
                pre_test_slider.setReadOnly(true);
                pre_test_slider.setMarkerPos(selected);
            }
        }

        if ((t - selectedTime) >= 0.5 && selected !== null) {
            continueRoutine = false;
        }

        if ((selected && (preTestTime + selectedTime) >= preTestTotalTimeL)
        || (!selected && (preTestTime + t) >= preTestTotalTimeL)) {
            continueRoutine = false;
        }
      End JS Routine:
        if (pre_test_slider.markerPos !== undefined) {
            preTestTime += selectedTime;
            psychoJS.experiment.addData("pre_test.response",
                itemLabels[pre_test_slider.getMarkerPos() - 1]);
            psychoJS.experiment.addData("pre_test.tEnd", selectedTime);
        } else {
            preTestTime += t;
            psychoJS.experiment.addData("pre_test.response","Not provided");
            psychoJS.experiment.addData("pre_test.tEnd",t);
        }
  Routine PRE_TEST_TRAIN
    ImageComponent pre_test_train_item
      image [set every repeat] = $img_path
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 31.0
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    ImageComponent pre_test_train_whitescreen
      image [set every repeat] = materials\merge_sort\imgs\white_BG.png
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.6
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    ImageComponent pre_test_train_fixation
      image [set every repeat] = materials\imgs\MaRs_IB\fixation.png
      pos = (0, 0.06)
      saveStartStop = False
      size = (0.66, 0.72)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    SliderComponent pre_test_train_slider
      borderColor = white
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.48, 0.04)
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 31.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    MouseComponent pre_test_train_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
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    TextComponent pre_test_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
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    TextComponent pre_test_train_counter_1
      letterHeight = 0.03
      pos = (0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
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    TextComponent pre_test_train_counter_2
      color = yellow
      letterHeight = 0.03
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
      wrapWidth = 0.4
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    TextComponent pre_test_train_instr
      letterHeight = 0.03
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
      wrapWidth = 0.4
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      text:
        The 3x3 tiles relate to each other in one or more of these aspects:

        colour, size, position and shape.

        CHOOSE one of the 4 provided options (A/B/C/D) that will correctly complete the tiles by REPLACING the "?".

        You have 30 SECS for each question!
    TextComponent pre_test_train_feedback
      color = yellow
      letterHeight = 0.03
      pos = (0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 31.0
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    TextComponent pre_test_train_mark
      color = black
      letterHeight = 0.1
      pos = (0.15, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [time (s)] = 31.0
      text [set every repeat] = ?
      wrapWidth = 0.4
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    CodeComponent pre_test_train_code
      Code Type = JS
      Begin JS Routine:
        item_image_path = img_path;
        itemLabels = ["a","b","c","d"];
        selected = null;
        selectedTime = 0;
        stopTime = preTestTimeL;
        skipped = false;

        pre_test_train_counter_1.text = "Practice question No." + (MaRs_IB_1.thisTrialN + 1) + " out of 10";
        pre_test_train_counter_2.text = "Remaining correct answer(s) to skip practice: " + (3 - preTestTrainCorrectCnt);

        progressBar.hide();
        pre_test_train_slider.setReadOnly(false);

        if (preTestTrainCorrectCnt >= 3) {
            skipped = true;
        }
      Each JS Frame:
        if (t >= 0.6 && pre_test_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              pre_test_train_mouse.tStart = t;
              pre_test_train_mouse.frameNStart = frameN;

              pre_test_train_mouse.status = PsychoJS.Status.STARTED;
              pre_test_train_mouse.mouseClock.reset();
              prevButtonState = pre_test_train_mouse.getPressed();
        }

        if ((pre_test_train_mouse.status === PsychoJS.Status.STARTED
        || pre_test_train_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              pre_test_train_mouse.status = PsychoJS.Status.FINISHED;
        }


        if (t >= 0.6 && pre_test_train_slider.markerPos !== undefined) {
            if (selected === null) {
                var ans = item_image_path.split("_").slice(-1)[0].split(".")[0];
                if (itemLabels[pre_test_train_slider.getMarkerPos() - 1] === ans) {
                    pre_test_train_feedback.text = "Correct";
                    preTestTrainCorrectCnt += 1;
                    pre_test_train_counter_2.text = "Remaining correct answer(s) to skip practice: " + (3 - preTestTrainCorrectCnt);
                } else {
                    pre_test_train_feedback.text = "Wrong";
                }
                selected = pre_test_train_slider.getMarkerPos();
                selectedTime = t;
            } else {
                pre_test_train_slider.setReadOnly(true);
                pre_test_train_slider.setMarkerPos(selected);
            }
        }

        if (selectedTime >= 29 && selectedTime <= 30) {
            stopTime = selectedTime + 1.0;
        }

        if (t >= stopTime && pre_test_train_slider.markerPos === undefined) {
            continueRoutine = false;
        }

        pre_test_train_timer.text = timerWarningRemain(preTestTimeL, t, 5);

        if (selected !== null && (t - selectedTime) >= 1.0) {
            continueRoutine = false;
        }

        if (skipped) {
            continueRoutine = false;
        }
      End JS Routine:
        if (pre_test_train_slider.markerPos !== undefined) {
            psychoJS.experiment.addData("pre_test_train.response",itemLabels[selected - 1]);
            psychoJS.experiment.addData("pre_test_train.tEnd",selectedTime);
        } else {
            psychoJS.experiment.addData("pre_test_train.response","Not provided");
            psychoJS.experiment.addData("pre_test_train.tEnd",t);
        }
  Routine BREAK_1
    TextComponent break_1_instr
      color = yellow
      letterHeight = 0.03
      pos = (0, 0.0)
      startVal [condition] = t >= 0.0
      stopVal [condition] = breakEnded
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      text:
        You may take a short break now!

        Please do not refresh/close the browser tab or leave your device to sleep.

        Click the "Continue" button below when you are ready to proceed!
    MouseComponent break_1_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [condition] = t>=0.0
      stopVal [condition] = breakEnded
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    ImageComponent break_1_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [condition] = t>=0.0
      stopVal [condition] = breakEnded
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    CodeComponent break_1_code
      Code Type = JS
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      Begin JS Routine:
        breakEnded = false;
        routineT = 0;
        progressBar.show();
        progressBar.update("PRE_TEST");
      Each JS Frame:
        if (((t >= 0.5) && (break_1_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            break_1_mouse.tStart = t;
            break_1_mouse.frameNStart = frameN;
            break_1_mouse.status = PsychoJS.Status.STARTED;
            break_1_mouse.mouseClock.reset();
        }
        if (((break_1_mouse.isPressedIn(break_1_btn) && (break_1_mouse.status === PsychoJS.Status.STARTED)) && (break_1_btn.status === PsychoJS.Status.STARTED))) {
            break_1_mouse.status = PsychoJS.Status.FINISHED;
            breakEnded = true;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("break_1.tEnd",routineT);
  Routine BREAK_2
    TextComponent break_2_instr
      color = yellow
      letterHeight = 0.03
      pos = (0, 0.0)
      startVal [condition] = t >= 0.0
      stopVal [condition] = breakEnded
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      text:
        You may take a short break now!

        Please do not refresh/close the browser tab or leave your device to sleep.

        Click the "Continue" button below when you are ready to proceed!
    MouseComponent break_2_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [condition] = t>=0.0
      stopVal [condition] = breakEnded
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    ImageComponent break_2_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [condition] = t>=0.0
      stopVal [condition] = breakEnded
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    CodeComponent break_2_code
      Code Type = JS
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      Begin JS Routine:
        breakEnded = false;
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (break_2_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            break_2_mouse.tStart = t;
            break_2_mouse.frameNStart = frameN;
            break_2_mouse.status = PsychoJS.Status.STARTED;
            break_2_mouse.mouseClock.reset();
        }
        if (((break_2_mouse.isPressedIn(break_2_btn) && (break_2_mouse.status === PsychoJS.Status.STARTED)) && (break_2_btn.status === PsychoJS.Status.STARTED))) {
            break_2_mouse.status = PsychoJS.Status.FINISHED;
            breakEnded = true;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("break_2.tEnd",routineT);
  Routine LOTTERY
    TextComponent lottery_instr
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
      text = If you want to participate in the lottery for winning a book, please enter your e-mail below. Your personal data will be stored separate from your experiment data.
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    TextboxComponent lottery_res
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.7, 0.15)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    ImageComponent lottery_btn
      image = materials/imgs/submit.png
      pos = (0, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent lottery_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    CodeComponent lotter_code
      Code Type = JS
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      Each JS Frame:
        if (((t >= 0.5) && (lottery_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            lottery_mouse.tStart = t;
            lottery_mouse.frameNStart = frameN;
            lottery_mouse.status = PsychoJS.Status.STARTED;
            lottery_mouse.mouseClock.reset();
        }
        if (((lottery_mouse.isPressedIn(exp_check_btn) && (lottery_mouse.status === PsychoJS.Status.STARTED)) && (lottery_btn.status === PsychoJS.Status.STARTED))) {
            lottery_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }

        if ((lottery_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            lottery_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        sessionStorage.setItem("emailAddr", lottery_res.text);
  Routine EXP_CHECK
    ImageComponent exp_check_btn
      image = materials/imgs/submit.png
      pos = (0, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent exp_check_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    TextComponent exp_check_question_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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      text:
        Which of the following sorting algorithms do you know
        (Bubble-Sort / Merge-Sort / Insertion-Sort / Quick-Sort / Dictionary-Sort / Bucket-Sort / Spider-Sort / Ticket-Sort) ?

        And have you used any for the sorting task in this experiment?
    TextboxComponent exp_check_res
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    TextComponent exp_check_question_2
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
      text = Have you learned/are you learning about sorting algorithms in school or college? 
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    SliderComponent exp_check_slider_2
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = ("Yes", "NO")
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.5, 0.01)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    TextComponent exp_check_question_1
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
      text = Do you have a degree in computer sciences / programming?
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    SliderComponent exp_check_slider_1
      color = white
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = ("Yes", "NO")
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      size = (0.5, 0.01)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    CodeComponent exp_check_code
      Code Type = JS
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      Begin JS Routine:
        routineT = 0;
      Each JS Frame:
        if (((t >= 0.5) && (exp_check_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            exp_check_mouse.tStart = t;
            exp_check_mouse.frameNStart = frameN;
            exp_check_mouse.status = PsychoJS.Status.STARTED;
            exp_check_mouse.mouseClock.reset();
        }
        if (((exp_check_mouse.isPressedIn(exp_check_btn) && (exp_check_mouse.status === PsychoJS.Status.STARTED)) && (exp_check_btn.status === PsychoJS.Status.STARTED))) {
            exp_check_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;

        if ((exp_check_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            exp_check_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("exp_check.tEnd",routineT);
        if (exp_check_slider_1.markerPos !== undefined) {
            psychoJS.experiment.addData("exp_check_slider_1.response", exp_check_slider_1.labels[exp_check_slider_1.getMarkerPos() - 1]);
        } else {
            psychoJS.experiment.addData("exp_check_slider_1.response", "Not provided");
        }

        if (exp_check_slider_2.markerPos !== undefined) {
            psychoJS.experiment.addData("exp_check_slider_2.response", exp_check_slider_2.labels[exp_check_slider_2.getMarkerPos() - 1]);
        } else {
            psychoJS.experiment.addData("exp_check_slider_2.response", "Not provided");
        }
        progressBar.update("EXP_CHECK");
Flow
  Routine CONSENT
  Routine PRE_TEST_INTRO
  LoopInitiator MaRs_IB_1 loopType="TrialHandler"
    conditionsFile = materials/pre_test_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine PRE_TEST_TRAIN
  LoopTerminator MaRs_IB_1
  LoopInitiator MaRs_IB_2 loopType="TrialHandler"
    conditionsFile = materials/pre_test_cond.csv
    loopType = sequential
    nReps = 10
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    Routine PRE_TEST
  LoopTerminator MaRs_IB_2
  Routine BREAK_1
  Routine INTRO
  Routine HINT
  Routine MERGE_INTRO
  LoopInitiator TRAIN_1 loopType="TrialHandler"
    conditionsFile = materials/merge_train_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1.png'), ('labels', ['A', 'B']), ('input', [4, 2]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2.png'), ('labels', ['A', 'B', 'D', 'C']), ('input', [1, 4, 2, 3]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2.png'), ('labels', ['A', 'B', 'D', 'C']), ('input', [1, 4, 2, 3]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5.png'), ('labels', ['C', 'D', 'B', 'A', 'G', 'E', 'F']), ('input', [1, 2, 5, 7, 3, 4, 6]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong.png')])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
    Routine MERGE_TRAIN
    Routine MERGE_EXPL
  LoopTerminator TRAIN_1
  Routine MERGE_TEST_INTRO
  LoopInitiator TEST_1 loopType="TrialHandler"
    conditionsFile = materials/merge_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_1.png'), ('input', [6, 2])]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_2.png'), ('input', [5, 7, 8, 2, 3, 10])])]
    Routine MERGE_TEST
  LoopTerminator TEST_1
  Routine SORT_INTRO
  LoopInitiator TRAIN_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/apple'), ('input', [7, 1, 6, 3, 4, 5, 2]), ('labels', ['D', 'G', 'B', 'F', 'A', 'E', 'C'])])]
    conditionsFile = materials/sort_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TRAIN
    Routine SORT_EXPL
  LoopTerminator TRAIN_2
  Routine BREAK_2
  Routine SORT_TEST_INTRO
  LoopInitiator TEST_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/melon'), ('input', [5, 2, 6, 7, 4, 3, 1]), ('labels', ['E', 'B', 'C', 'A', 'F', 'D', 'G'])])]
    conditionsFile = materials/sort_test_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TEST
  LoopTerminator TEST_2
  LoopInitiator REVIEW loopType="TrialHandler"
    conditionsFile = materials/review_cond.csv
    loopType = sequential
    nReps = 1
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    Routine REVIEW_QUESTIONS
  LoopTerminator REVIEW
  Routine EXP_CHECK
  Routine BACKGROUND
  Routine LOTTERY
  Routine DEBRIEF
