PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['materials\\merge_sort\\imgs\\fruits\\banana.png', 'materials\\merge_sort\\imgs\\fruits\\melon.png', 'materials\\merge_sort\\imgs\\blue_star_clicked.png', 'materials\\merge_sort\\imgs\\fruits\\apple.png', 'materials\\merge_sort\\imgs\\compare_clicked.png', 'materials\\imgs\\other_gender_selected.png', 'materials\\imgs\\prefer_not_to_say_selected.png', 'materials\\merge_sort\\imgs\\grey_BG.png', 'materials\\merge_sort\\imgs\\fruits\\apple_A.png', 'materials\\merge_sort\\imgs\\fruits\\apple_B.png', 'materials\\merge_sort\\imgs\\fruits\\apple_C.png', 'materials\\merge_sort\\imgs\\fruits\\apple_D.png', 'materials\\merge_sort\\imgs\\fruits\\apple_E.png', 'materials\\merge_sort\\imgs\\fruits\\apple_F.png', 'materials\\merge_sort\\imgs\\fruits\\apple_G.png', 'materials\\merge_sort\\imgs\\fruits\\apple_H.png', 'materials\\merge_sort\\imgs\\fruits\\apple_I.png', 'materials\\merge_sort\\imgs\\fruits\\apple_J.png', 'materials\\merge_sort\\imgs\\fruits\\apple_K.png', 'materials\\merge_sort\\imgs\\fruits\\apple_L.png', 'materials\\merge_sort\\imgs\\fruits\\banana.png', 'materials\\merge_sort\\imgs\\fruits\\banana_A.png', 'materials\\merge_sort\\imgs\\fruits\\banana_B.png', 'materials\\merge_sort\\imgs\\fruits\\banana_C.png', 'materials\\merge_sort\\imgs\\fruits\\banana_D.png', 'materials\\merge_sort\\imgs\\fruits\\banana_E.png', 'materials\\merge_sort\\imgs\\fruits\\banana_F.png', 'materials\\merge_sort\\imgs\\fruits\\banana_G.png', 'materials\\merge_sort\\imgs\\fruits\\banana_H.png', 'materials\\merge_sort\\imgs\\fruits\\banana_I.png', 'materials\\merge_sort\\imgs\\fruits\\banana_J.png', 'materials\\merge_sort\\imgs\\fruits\\banana_K.png', 'materials\\merge_sort\\imgs\\fruits\\banana_L.png', 'materials\\merge_sort\\imgs\\fruits\\melon_A.png', 'materials\\merge_sort\\imgs\\fruits\\melon_B.png', 'materials\\merge_sort\\imgs\\fruits\\melon_C.png', 'materials\\merge_sort\\imgs\\fruits\\melon_D.png', 'materials\\merge_sort\\imgs\\fruits\\melon_E.png', 'materials\\merge_sort\\imgs\\fruits\\melon_F.png', 'materials\\merge_sort\\imgs\\fruits\\melon_G.png', 'materials\\merge_sort\\imgs\\fruits\\melon_H.png', 'materials\\merge_sort\\imgs\\fruits\\melon_I.png', 'materials\\merge_sort\\imgs\\fruits\\melon_J.png', 'materials\\merge_sort\\imgs\\fruits\\melon_K.png', 'materials\\merge_sort\\imgs\\fruits\\melon_L.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct_expl.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_3_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_2_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong_selected.png', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct_selected.png', 'materials/merge_sort/imgs/scale_right.png', 'materials/merge_sort/imgs/scale_left.png', 'materials/merge_sort/imgs/scale_balanced.png', 'materials/imgs/other_selected.png', 'materials/imgs/male_selected.png', 'materials/imgs/less_than_high_school_selected.png', 'materials/imgs/high_school_equivalent_selected.png', 'materials/imgs/graduate_selected.png', 'materials/imgs/female_selected.png', 'materials/imgs/doctorate_selected.png', 'materials/imgs/college_selected.png', 'materials/imgs/bachelor_selected.png', 'materials/imgs/_65_selected.png', 'materials/imgs/_55_64_selected.png', 'materials/imgs/_45_54_selected.png', 'materials/imgs/_35_44_selected.png', 'materials/imgs/_25_34_selected.png', 'materials/imgs/_18_24_selected.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(0,0,0)
  expName = machine_human_learning
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Routines
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  Routine MERGE_TEST
    VariableComponent merge_test_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = labels
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90
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    VariableComponent merge_test_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextComponent merge_test_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent merge_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Put fruits on the CONVEYOR BELT by entering their labels as  X,X,X,X, ... ,X
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    TextComponent merge_test_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT

        You have 90 SECS to SUBMIT!
    TextboxComponent merge_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextboxComponent merge_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    TextboxComponent merge_test_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    ImageComponent merge_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent merge_test_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    ImageComponent merge_test_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    MouseComponent merge_test_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90
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    TextComponent merge_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90
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    CodeComponent merge_test_setup
      Code Type = Both
      Begin JS Routine:
        merge_test_input = input;
        merge_test_labels = encryption;
        merge_test_compareN = 0;
        merge_test_compare_records = [];

        merge_test_res.refresh();
        merge_test_scale_left.refresh();
        merge_test_scale_right.refresh();

        routineT = 0;
        comparePressedT = 0.0;
        isComparePressed = false;

        const merge_test_mouse_btns = merge_test_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            merge_test_mouse_btns.pressed[b] = 0;
            merge_test_mouse_btns.clocks[b].reset();
            merge_test_mouse_btns.times[b] = 0.0;
        }
      Begin Routine:
        merge_test_input = input
        merge_test_labels = encryption
        merge_test_compareN = 0
      Each Frame:
        if merge_test_mouse.isPressedIn(merge_test_compare):
            merge_test_compareN = merge_test_compareN + compare(merge_test_scale,merge_test_input,merge_test_labels,merge_test_scale_instr,merge_test_scale_left,merge_test_scale_right)

        merge_test_timer.text = timerWarning(mergeTestTimeL,t)
      Each JS Frame:
        if (t >= 0.5 && merge_test_mouse.status === PsychoJS.Status.NOT_STARTED) {
              merge_test_mouse.tStart = t;
              merge_test_mouse.frameNStart = frameN;

              merge_test_mouse.status = PsychoJS.Status.STARTED;
              merge_test_mouse.mouseClock.reset();
              prevButtonState = merge_test_mouse.getPressed();
        }

        if ((merge_test_mouse.status === PsychoJS.Status.STARTED || merge_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_test_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (t >= 0.5 && merge_test_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_test_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_test_btn,merge_test_compare]) {
                        if (merge_test_mouse.isPressedIn(obj) && obj.name === "merge_test_btn") {
                            merge_test_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(merge_test_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "merge_test_compare") {
                                    const compareStatus = compare(merge_test_scale, merge_test_input, merge_test_labels, merge_test_compare, merge_test_scale_instr, merge_test_scale_left, merge_test_scale_right);
                                    merge_test_compareN = (merge_test_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        merge_test_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        merge_test_timer.text = timerWarning(mergeTestTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            merge_test_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("merge_test_input",merge_test_input);
        psychoJS.experiment.addData("merge_test_labels",merge_test_labels);
        psychoJS.experiment.addData("merge_test_compareN",merge_test_compareN);
        psychoJS.experiment.addData("merge_test_compare_records",merge_test_compare_records);
        psychoJS.experiment.addData("merge_test.tStart",merge_test.tStart);
        psychoJS.experiment.addData("merge_test.tEnd",routineT);
      End Routine:
        pass
  Routine MERGE_TRAIN
    VariableComponent merge_train_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    VariableComponent mc_order
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_mc_path_2
      saveStartStop = False
      startRoutineValue = mc_path_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_mc_path_1
      saveStartStop = False
      startRoutineValue = mc_path_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
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    VariableComponent merge_train_input
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    TextComponent merge_train_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent merge_ans_instr
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Please SELECT the CONVEYOR BELT that has the correct fruit(s) on YELLOW position(s):
      wrapWidth = 1.5
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    TextComponent merge_train_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. In EACH ORANGE box, fruits are arranged in INCREASING weights from LEFT to RIGHT

        3. Fruits on the CONVEYOR BELT are arranged in INCREASING weights from LEFT to RIGHT

        You have 90 SECS to SUBMIT!
    TextboxComponent merge_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    TextboxComponent merge_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.11)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_mc_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3,-0.25)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_mc_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.3, -0.4)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ImageComponent merge_train_btn_1
      image = materials/imgs/submit.png
      pos = (0.5, -0.25)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_btn_2
      image = materials/imgs/submit.png
      pos = (0.5, -0.4)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    ImageComponent merge_train_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    MouseComponent merge_train_mouse
      clickable = [merge_train_compare,merge_train_btn_1,merge_train_btn_2]
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 90.0
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    TextComponent merge_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 90.0
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    CodeComponent merge_train_setup
      Code Type = Both
      Begin JS Routine:
        merge_train_input = input;
        mc_order = [];
        merge_train_compare_records = [];
        merge_train_labels = encryption;
        merge_train_compareN = 0;
        merge_train_mc_path_2 = mc_path_2;
        merge_train_mc_path_1 = mc_path_1;

        merge_train_scale_left.refresh();
        merge_train_scale_right.refresh();

        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;

        const merge_train_mouse_btns = merge_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            merge_train_mouse_btns.pressed[b] = 0;
            merge_train_mouse_btns.clocks[b].reset();
            merge_train_mouse_btns.times[b] = 0.0;
        }
      Begin Routine:
        merge_train_input = input
        mc_order = []
        merge_train_labels = encryption
        merge_train_compareN = 0
        merge_train_mc_path_2 = mc_path_2
        merge_train_mc_path_1 = mc_path_1
      Each Frame:
        if mc_order == []:
            mc_order = getCorrectMCOrder(TRAIN_1.thisTrialN,merge_train_mc_path_1,merge_train_mc_path_2,merge_train_mc_1,merge_train_mc_2)

        if merge_train_mouse.isPressedIn(merge_train_compare) and merge_train_compare.status == STARTED:
            merge_train_compareN = merge_train_compareN + compare(merge_train_scale,merge_train_input,merge_train_labels,merge_train_scale_instr,merge_train_scale_left,merge_train_scale_right)

        merge_train_timer.text = timerWarning(mergeTrainTimeL,t)

        if merge_train_mouse.isPressedIn(merge_train_btn_1) and merge_train_btn_1.status == STARTED:
            #merge_train_mouse.clicked_name.append(merge_train_btn_1.name)
            continueRoutine = False
        if merge_train_mouse.isPressedIn(merge_train_btn_2) and merge_train_btn_2.status == STARTED:
            #merge_train_mouse.clicked_name.append(merge_train_btn_2.name)
            continueRoutine = False
      Each JS Frame:
        if ((mc_order.length === 0)) {
            mc_order = getCorrectMCOrder(TRAIN_1.thisTrialN, merge_train_mc_path_1, merge_train_mc_path_2, merge_train_mc_1, merge_train_mc_2);
        }

        if (t >= 0.5 && merge_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              // keep track of start time/frame for later
              merge_train_mouse.tStart = t;  // (not accounting for frame time here)
              merge_train_mouse.frameNStart = frameN;  // exact frame index

              merge_train_mouse.status = PsychoJS.Status.STARTED;
              merge_train_mouse.mouseClock.reset();
              prevButtonState = merge_train_mouse.getPressed();  // if button is down already this ISN'T a new click
        }

        if ((merge_train_mouse.status === PsychoJS.Status.STARTED || merge_train_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_train_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (t >= 0.5 && merge_train_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_train_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_train_btn_1,merge_train_btn_2,merge_train_compare,merge_train_scale_left,merge_train_scale_right]) {
                        if (merge_train_mouse.isPressedIn(obj) && (obj.name === "merge_train_btn_1" || obj.name === "merge_train_btn_2")) {
                            merge_train_mouse.clicked_name.push(obj.name);
                            merge_train_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(merge_train_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "merge_train_compare") {
                                    const compareStatus = compare(merge_train_scale, merge_train_input, merge_train_labels, merge_train_compare, merge_train_scale_instr, merge_train_scale_left, merge_train_scale_right);
                                    merge_train_compareN = (merge_train_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        merge_train_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        merge_train_timer.text = timerWarning(mergeTrainTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            merge_train_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("merge_train.tStart", merge_train.tStart);
        psychoJS.experiment.addData("mc_order",mc_order);
        psychoJS.experiment.addData("merge_train_compareN",merge_train_compareN);
        psychoJS.experiment.addData("merge_train_labels",merge_train_labels);
        psychoJS.experiment.addData("merge_train_input",merge_train_input);
        psychoJS.experiment.addData("merge_train_compare_records",merge_train_compare_records);
        psychoJS.experiment.addData("merge_train_mouse_clicked",merge_train_mouse.clicked_name);
        psychoJS.experiment.addData("merge_train.tEnd",routineT);
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  Routine MERGE_INTRO
    TextComponent intro_text_2
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        ALICE: BIZZ ... Thank you for coming to help! We have fruits in some boxes to be put on a conveyor.

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT

        LEARN the BLUE STAR operation in steps and master it.
    ImageComponent alice_2
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_3
      image = materials/merge_sort/imgs/door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent merge_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent merge_intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and merge_intro_mouse.status == PsychoJS.Status.NOT_STARTED:
              merge_intro_mouse.tStart = t
              merge_intro_mouse.frameNStart = frameN

              merge_intro_mouse.status = PsychoJS.Status.STARTED
              merge_intro_mouse.mouseClock.reset()

        if merge_intro_mouse.isPressedIn(merge_intro_btn) and merge_intro_mouse.status == PsychoJS.Status.STARTED and merge_intro_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (merge_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            merge_intro_mouse.tStart = t;
            merge_intro_mouse.frameNStart = frameN;
            merge_intro_mouse.status = PsychoJS.Status.STARTED;
            merge_intro_mouse.mouseClock.reset();
        }
        if (((merge_intro_mouse.isPressedIn(merge_intro_btn) && (merge_intro_mouse.status === PsychoJS.Status.STARTED)) && (merge_intro_btn.status === PsychoJS.Status.STARTED))) {
            merge_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((merge_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            merge_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("merge_intro.tEnd",routineT);
  Routine INTRO
    TextComponent intro_text
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Today, you will learn how to help our robot trader friends ALICE & BOB to package fruits for shipment.

        You will visit two warehouses "rooms", learn and perform the BLUE STAR operator and the PURPLE DIAMOND operator ALICE and BOB will first help you learn these operators and then test your knowledge afterwards.
    ImageComponent alice
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent bob
      image = materials/merge_sort/imgs/bob.png
      pos = (0.2, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_1
      image = materials/merge_sort/imgs/door.png
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_2
      image = materials/merge_sort/imgs/door.png
      pos = (0.4, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120.0
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    CodeComponent intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and intro_mouse.status == PsychoJS.Status.NOT_STARTED:
              intro_mouse.tStart = t
              intro_mouse.frameNStart = frameN

              intro_mouse.status = PsychoJS.Status.STARTED
              intro_mouse.mouseClock.reset()

        if intro_mouse.isPressedIn(intro_btn) and intro_mouse.status == PsychoJS.Status.STARTED and intro_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            intro_mouse.tStart = t;
            intro_mouse.frameNStart = frameN;
            intro_mouse.status = PsychoJS.Status.STARTED;
            intro_mouse.mouseClock.reset();
        }
        if (((intro_mouse.isPressedIn(intro_btn) && (intro_mouse.status === PsychoJS.Status.STARTED)) && (intro_btn.status === PsychoJS.Status.STARTED))) {
            intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("intro.tEnd",routineT);
  Routine SORT_INTRO
    TextComponent intro_text_3
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        BOB: CLIKKKK ... SOOO GOOooD to see you!

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        LEARN with BOB the PURPLE DIAMOND operation in steps and master it.
    ImageComponent bob_2
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example
      image = materials/merge_sort/imgs/sort_train/sort_train_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_4
      image = materials/merge_sort/imgs/door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent sort_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent sort_intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and sort_intro_mouse.status == PsychoJS.Status.NOT_STARTED:
              sort_intro_mouse.tStart = t
              sort_intro_mouse.frameNStart = frameN

              sort_intro_mouse.status = PsychoJS.Status.STARTED
              sort_intro_mouse.mouseClock.reset()

        if sort_intro_mouse.isPressedIn(sort_intro_btn) and sort_intro_mouse.status == PsychoJS.Status.STARTED and sort_intro_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (sort_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            sort_intro_mouse.tStart = t;
            sort_intro_mouse.frameNStart = frameN;
            sort_intro_mouse.status = PsychoJS.Status.STARTED;
            sort_intro_mouse.mouseClock.reset();
        }
        if (((sort_intro_mouse.isPressedIn(sort_intro_btn) && (sort_intro_mouse.status === PsychoJS.Status.STARTED)) && (sort_intro_btn.status === PsychoJS.Status.STARTED))) {
            sort_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;
        if ((sort_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            sort_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_intro.tEnd",routineT);
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
  Routine DEBRIEF
    TextComponent intro_text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        This is the end of the experiment!

        Thank you very much for your time and effort!

        Click anywhere to exit!
    MouseComponent debrief_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120.0
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  Routine MERGE_TEST_INTRO
    TextComponent intro_text_6
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        ALICE: BIZZ ... Now is time to apply the knowledge you learned about the BLUE STAR

        1. The fruits in EACH ORANGE box INCREASE in weight from LEFT to RIGHT

        2. The BLUE STAR puts fruits from two ORANGE boxes on the CONVEYOR BELT in INCREASING weights from LEFT to RIGHT
    ImageComponent alice_4
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_example_2
      image = materials/merge_sort/imgs/merge_train/merge_train_example.png
      pos = (0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_6
      image = materials/merge_sort/imgs/door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent merge_test_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent merge_test_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent merge_test_intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and merge_test_intro_mouse.status == PsychoJS.Status.NOT_STARTED:
              merge_test_intro_mouse.tStart = t
              merge_test_intro_mouse.frameNStart = frameN

              merge_test_intro_mouse.status = PsychoJS.Status.STARTED
              merge_test_intro_mouse.mouseClock.reset()

        if merge_test_intro_mouse.isPressedIn(merge_test_intro_btn) and merge_test_intro_mouse.status == PsychoJS.Status.STARTED and merge_test_intro_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (merge_test_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            merge_test_intro_mouse.tStart = t;
            merge_test_intro_mouse.frameNStart = frameN;
            merge_test_intro_mouse.status = PsychoJS.Status.STARTED;
            merge_test_intro_mouse.mouseClock.reset();
        }
        if (((merge_test_intro_mouse.isPressedIn(merge_test_intro_btn) && (merge_test_intro_mouse.status === PsychoJS.Status.STARTED)) && (merge_test_intro_btn.status === PsychoJS.Status.STARTED))) {
            merge_test_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;

        if ((merge_test_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            merge_test_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("merge_test_intro.tEnd",routineT);
  Routine SORT_TEST_INTRO
    TextComponent intro_text_7
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        BOB: CLIKKKK ... Now is time to apply the knowledge you learned about the PURPLE DIAMOND

        1. You need to arrange a PILE of fruits that is most likely UNORDERED

        2. The PURPLE DIAMOND arranges fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT
    ImageComponent bob_4
      image = materials/merge_sort/imgs/bob.png
      pos = (0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_example_2
      image = materials/merge_sort/imgs/sort_train/sort_train_example.png
      pos = (-0.3, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_7
      image = materials/merge_sort/imgs/door.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent sort_test_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent sort_test_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent sort_test_intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and sort_test_intro_mouse.status == PsychoJS.Status.NOT_STARTED:
              sort_test_intro_mouse.tStart = t
              sort_test_intro_mouse.frameNStart = frameN

              sort_test_intro_mouse.status = PsychoJS.Status.STARTED
              sort_test_intro_mouse.mouseClock.reset()

        if sort_test_intro_mouse.isPressedIn(sort_test_intro_btn) and sort_test_intro_mouse.status == PsychoJS.Status.STARTED and sort_test_intro_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (sort_test_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            sort_test_intro_mouse.tStart = t;
            sort_test_intro_mouse.frameNStart = frameN;
            sort_test_intro_mouse.status = PsychoJS.Status.STARTED;
            sort_test_intro_mouse.mouseClock.reset();
        }
        if (((sort_test_intro_mouse.isPressedIn(sort_test_intro_btn) && (sort_test_intro_mouse.status === PsychoJS.Status.STARTED)) && (sort_test_intro_btn.status === PsychoJS.Status.STARTED))) {
            sort_test_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;
        if ((sort_test_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            sort_test_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_test_intro.tEnd",routineT);
  Routine SORT_TRAIN
    VariableComponent sort_train_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_compare_limit
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = ms_compare
      startVal [time (s)] = 0
      stopVal [time (s)] = 300.0
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    VariableComponent sort_train_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_train_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits into the SHIPPING CRATE by entering their labels as  X,X,X,X, ... ,X
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    TextComponent sort_train_instr
      letterHeight = 0.02
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED and you can move fruits freely on the MONITOR in the middle

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        4. You can see the NUMBER OF COMPARISONS BOB uses as a reference and you have 300 SECS to SUBMIT!
    TextboxComponent sort_train_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_train_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_train_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_train_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent sort_train_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    TextComponent sort_train_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    TextComponent sort_train_hint
      color = yellow
      letterHeight = 0.04
      pos = (0.5, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    CodeComponent sort_train_setup
      Code Type = Both
      Begin JS Routine:
        items = [];
        frameCnt = 0;
        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;
        tracePos = [];
        sort_train_input = input;
        sort_train_labels = encryption;
        sort_train_compareN = 0;
        sort_train_compare_records = [];
        sort_train_trace = [];
        sort_train_compare_limit = ms_compare;
        sort_train_path_base = img_path_base;

        sort_train_res.refresh();
        sort_train_scale_left.refresh();
        sort_train_scale_right.refresh();

        sort_train_hint.text = ((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: 0");
        movingItem = null;

        x = sort_train_board.getPos()[0];
        y = sort_train_board.getPos()[1];
        w = sort_train_board.getSize()[0];
        h = sort_train_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        const sort_train_mouse_btns = sort_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            sort_train_mouse_btns.pressed[b] = 0;
            sort_train_mouse_btns.clocks[b].reset();
            sort_train_mouse_btns.times[b] = 0.0;
        }
      Begin Routine:
        items = []
        frameCnt = 0
        tracePos = []
        sort_train_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: 0"

        movingItem = None
        (x, y) = sort_train_board.pos
        (w,h) = sort_train_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        frameCnt = frameCnt + 1

        if items == []:
            items = enableImageComponents(SORT_TRAINComponents,sort_train_labels,sort_train_path_base)

        movingItem = moveItem(sort_train_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_train_trace.append(j)
            tracePos = newTracePos

        if sort_train_mouse.isPressedIn(sort_train_compare):
            sort_train_compareN = sort_train_compareN + compare(sort_train_scale,sort_train_input,sort_train_labels,sort_train_scale_instr,sort_train_scale_left,sort_train_scale_right)
            sort_train_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN)

        sort_train_ans = sort_train_res.text
        sort_train_timer.text = timerWarning(sortTrainTimeL,t)
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_TRAINComponents, sort_train_labels, sort_train_path_base);
            for (var u = 0, v = items.length; (u < v); u += 1) {
                items[u].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_train_mouse.tStart = t;
              sort_train_mouse.frameNStart = frameN;

              sort_train_mouse.status = PsychoJS.Status.STARTED;
              sort_train_mouse.mouseClock.reset();
              prevButtonState = sort_train_mouse.getPressed();
        }

        if ((sort_train_mouse.status === PsychoJS.Status.STARTED || sort_train_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_train_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_train_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_train_btn,sort_train_compare]) {
                        if (sort_train_mouse.isPressedIn(obj) && obj.name === "sort_train_btn") {
                            sort_train_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_train_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_train_compare") {
                                    const compareStatus = compare(sort_train_scale, sort_train_input, sort_train_labels, sort_train_compare, sort_train_scale_instr, sort_train_scale_left, sort_train_scale_right);
                                    sort_train_compareN = (sort_train_compareN + compareStatus[0]);
                                    sort_train_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + sort_train_compareN.toString());
                                    if (compareStatus[0] !== 0) {
                                        sort_train_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_train_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_train_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_train_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }
        sort_train_timer.text = timerWarning(sortTrainTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_train_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_train_input",sort_train_input);
        psychoJS.experiment.addData("sort_train_labels",sort_train_labels);
        psychoJS.experiment.addData("sort_train_trace",sort_train_trace);
        psychoJS.experiment.addData("sort_train_compareN",sort_train_compareN);
        psychoJS.experiment.addData("sort_train.tStart",sort_train_ex_1.tStart);
        psychoJS.experiment.addData("sort_train.tEnd",routineT);
        psychoJS.experiment.addData("sort_train_compare_records",sort_train_compare_records);
  Routine SORT_EXPL
    VariableComponent sort_expl_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60.0
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    VariableComponent sort_expl_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    VariableComponent sort_expl_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent sort_expl_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_expl_feedback_1
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.18)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_feedback_2
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_instr
      letterHeight = 0.025
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. READ the feedback and CHECK the provided answer with yours

        3. You can move fruits freely on the MONITOR in the middle to understand the answer and CONTINUE if you are ready

        You have 60 SECS to spare!
    TextboxComponent sort_expl_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent sort_expl_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent sort_expl_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_btn
      image = materials/imgs/continue.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    ImageComponent sort_expl_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    MouseComponent sort_expl_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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    TextComponent sort_expl_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    TextComponent sort_expl_hint
      color = yellow
      letterHeight = 0.04
      pos = (0.5, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
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    CodeComponent sort_expl_setup
      Code Type = Both
      Begin JS Routine:
        positions = [];
        for (var u, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            u = _pj_a[_pj_c];
            positions.push(u.pos);
        }
        items = [];
        frameCnt = 0;
        tracePos = [];
        isComparePressed = false;
        comparePressedT = 0.0;
        movingItem = null;
        sort_expl_input = input;
        sort_expl_labels = encryption;
        sort_expl_compareN = 0;
        sort_expl_trace = [];
        sort_expl_compare_records = [];
        sort_expl_path_base = img_path_base;

        sort_expl_res.refresh();
        sort_expl_scale_left.refresh();
        sort_expl_scale_right.refresh();

        sort_expl_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + (sort_train_compareN + sort_expl_compareN).toString());
        sort_expl_res.text = sort_train_res.text;
        checkSortTrainAns(sort_expl_input, sort_expl_labels, sort_expl_res.text, sort_expl_feedback_1, sort_expl_feedback_2);
        x = sort_expl_board.getPos()[0];
        y = sort_expl_board.getPos()[1];
        w = sort_expl_board.getSize()[0];
        h = sort_expl_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        routineT = 0;
      Begin Routine:
        positions = []
        for u in items:
            positions.append(u.pos)

        items = []
        frameCnt = 0
        tracePos = []
        movingItem = None

        sort_expl_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN+sort_expl_compareN)
        sort_expl_res.text = sort_train_res.text
        checkSortTrainAns(sort_expl_input,sort_expl_labels,sort_expl_res.text,sort_expl_feedback_1,sort_expl_feedback_2)

        (x, y) = sort_expl_board.pos
        (w,h) = sort_expl_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        frameCnt = frameCnt + 1
        if items == []:
            items = enableImageComponents(SORT_EXPLComponents,sort_expl_labels,sort_expl_path_base)
            for i in range(len(items)):
                items[i].pos = positions[i]

        movingItem = moveItem(sort_expl_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_expl_trace.append(j)
            tracePos = newTracePos

        if sort_expl_mouse.isPressedIn(sort_expl_compare):
            sort_expl_compareN = sort_expl_compareN + compare(sort_expl_scale,sort_expl_input,sort_expl_labels,sort_expl_scale_instr,sort_expl_scale_left,sort_expl_scale_right)
            sort_expl_hint.text = "Bob uses "+ str(sort_train_compare_limit) + " comparisons\n" + "You have used: " + str(sort_train_compareN+sort_expl_compareN)

        sort_expl_timer.text = timerWarning(sortExplTimeL,t)
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_EXPLComponents, sort_expl_labels, sort_expl_path_base);
            for (var i = 0, _pj_a = items.length; (i < _pj_a); i += 1) {
                items[i].pos = positions[i];
                items[i].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_expl_mouse.tStart = t;
              sort_expl_mouse.frameNStart = frameN;

              sort_expl_mouse.status = PsychoJS.Status.STARTED;
              sort_expl_mouse.mouseClock.reset();
              prevButtonState = sort_expl_mouse.getPressed();
        }

        if ((sort_expl_mouse.status === PsychoJS.Status.STARTED || sort_expl_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_expl_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_expl_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_expl_btn,sort_expl_compare]) {
                        if (sort_expl_mouse.isPressedIn(obj) && obj.name === "sort_expl_btn") {
                            sort_expl_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_expl_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_expl_compare") {
                                    const compareStatus = compare(sort_expl_scale, sort_expl_input, sort_expl_labels, sort_expl_compare, sort_expl_scale_instr, sort_expl_scale_left, sort_expl_scale_right);
                                    sort_expl_compareN = (sort_expl_compareN + compareStatus[0]);
                                    sort_expl_hint.text = (((("BOB uses " + sort_train_compare_limit.toString()) + " comparisons\n") + "You have used: ") + (sort_train_compareN + sort_expl_compareN).toString());
                                    if (compareStatus[0] !== 0) {
                                        sort_expl_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_expl_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_expl_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_expl_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }
        sort_expl_timer.text = timerWarning(sortExplTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_expl_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_expl_trace",sort_expl_trace);
        psychoJS.experiment.addData("sort_expl_compareN",sort_expl_compareN);
        psychoJS.experiment.addData("sort_expl_compare_records",sort_expl_compare_records);
        psychoJS.experiment.addData("sort_expl.tStart",sort_expl_ex_1.tStart);
        psychoJS.experiment.addData("sort_expl.tEnd",routineT);
  Routine BACKGROUND
    VariableComponent demographic_gender
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_education
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent demographic_age
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    TextComponent background_instr
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = Please select most the fitting choice for each of the following questions
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    TextComponent gender
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your gender?
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    ImageComponent prefer_not_to_say
      image = materials/imgs/prefer_not_to_say.png
      pos = (0.3, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent other_gender
      image = materials/imgs/other_gender.png
      pos = (0.1, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent female
      image = materials/imgs/female.png
      pos = (-0.3, 0.2)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent male
      image = materials/imgs/male.png
      pos = (-0.1, 0.2)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    TextComponent age
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is your age?
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    ImageComponent _18_24
      image = materials/imgs/_18_24.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _25_34
      image = materials/imgs/_25_34.png
      pos = (-0.3, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _35_44
      image = materials/imgs/_35_44.png
      pos = (-0.1, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _45_54
      image = materials/imgs/_45_54.png
      pos = (0.1, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _55_64
      image = materials/imgs/_55_64.png
      pos = (0.3, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent _65
      image = materials/imgs/_65.png
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    TextComponent education
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = What is the highest degree or level of school you have completed?
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    ImageComponent less_than_high_school
      image = materials/imgs/less_than_high_school.png
      pos = (-0.75, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent high_school_equivalent
      image = materials/imgs/high_school_equivalent.png
      pos = (-0.5, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent college
      image = materials/imgs/college.png
      pos = (-0.25, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent bachelor
      image = materials/imgs/bachelor.png
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent graduate
      image = materials/imgs/graduate.png
      pos = (0.25, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent doctorate
      image = materials/imgs/doctorate.png
      pos = (0.5, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent other
      image = materials/imgs/other.png
      pos = (0.75, -0.2)
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 1
      stopVal [time (s)] = 120
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    ImageComponent background_btn
      image = materials/imgs/waiting.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.24, 0.1)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent background_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent setup
      Code Type = Both
      Before Experiment:
        sleepTime = 0.2
        green =  (-0.0039, 1.0000, -1.0000)
        red = (1.0000, -0.2235, -0.4431)
        white = (1.0,1.0,1.0)
        traceSaveAtFrame = 10

        introTimeL=120
        mergeTestTimeL = 90
        mergeTrainTimeL = 60
        mergeExplTimeL = 30
        sortTestTimeL = 300
        sortTrainTimeL = 240
        sortExplTimeL=60

        scaleEqPath = "materials/merge_sort/imgs/scale_balanced.png"
        scaleLtPath = "materials/merge_sort/imgs/scale_right.png"
        scaleGtPath = "materials/merge_sort/imgs/scale_left.png"

        def moveItem(mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                (u,v) = mouse.getPos()
                if left <= u and u <= right and bot <= v and v <= top:
                    grabbed.pos = (u,v)
                return grabbed
            else:
                # Move newly clicked piece
                for item in items:
                    if mouse.isPressedIn(item) and grabbed is not item:
                        return item
            return grabbed

        def comparePickedItems(values,labels,leftInput,rightInput):
            if len(leftInput.text) == 0 or len(rightInput.text) == 0:
                return [1,"",""]
            elif len(leftInput.text) > 1 or len(rightInput.text) > 1:
                return [2,"",""]
            elif leftInput.text not in labels or rightInput.text not in labels:
                return [3,"",""]
            leftIdx = labels.index(leftInput.text)
            rightIdx = labels.index(rightInput.text)
            leftValue = values[leftIdx]
            rightValue = values[rightIdx]
            if leftValue > rightValue:
                return [4,leftInput.text,rightInput.text]
            elif leftValue < rightValue:
                return [5,leftInput.text,rightInput.text]
            else:
                return [6,leftInput.text,rightInput.text]

        def timeSleep(T):
            u = 0
            for i in range(int(1000000*T)):
                u = u + 1

        def compare(scale,listValues,labels,instr,scaleLeft,scaleRight):
            state = comparePickedItems(listValues,labels,scaleLeft,scaleRight)
            timeSleep(sleepTime)
            if state[0] > 3:
                instr.color = green
                if state == 4:
                    instr.text = state[1] + " > " + state[2]
                    instr.height = 0.05
                    scale.image = scaleGtPath
                elif state == 5 :
                    instr.text = state[1] + " < " + state[2]
                    instr.height = 0.05
                    scale.image = scaleLtPath
                else:
                    instr.text = state[1] + " = " + state[2]
                    instr.height = 0.05
                    scale.image = scaleEqPath
                return [1,state[1],state[2]]
            elif state[0] == 1:
                instr.text = "Please provide labels in correct format for both LHS and RHS"
                instr.color = red
                instr.height = 0.02
            elif state[0] == 2:
                instr.text = "Please enter labels as single capitals"
                instr.color = red
                instr.height = 0.02
            elif state[0] == 3:
                instr.text = "Please enter an existing item"
                instr.color = red
                instr.height = 0.02
            return [0,state[1],state[2]]

        def checkSortTrainAns(input,labels,res,feedback_1,feedback_2):
            correct = getSortTrace(input,labels)
            submitted = res.replace(" ","")
            values = res.replace(",","")
            correctValues = correct.replace(",","")
            if submitted == correct:
                feedback_1.text = "Your answer is correct!"
                feedback_1.color = green
                feedback_2.text = ""
            elif values == correctValues:
                feedback_1.text = "Your answer does not have the correct format!\n"
                feedback_1.color = red
                feedback_2.text = "The correct answer is >>>>\n" + correct
                feedback_2.color = green
            else:
                feedback_1.text = "Your answer is wrong!"
                feedback_1.color = red
                feedback_2.text = "The correct answer is >>>>\n" + correct
                feedback_2.color = green

        def getSortTrace(input,labels):
            temp = []
            for i in input:
                temp.append([i])
            while len(temp) > 1:
                sublists = []
                for i in range(0,int(len(temp)/2)):
                    sublists.append(sorted(temp[i*2] + temp[i*2+1]))
                if len(temp) % 2 == 1:
                    temp = sublists + [temp[-1]]
                else:
                    temp = sublists
            sublistLabels = ""
            for i in range(0,len(temp)):
                for j in range(0,len(temp[i])):
                    sublistLabels = sublistLabels + labels[input.index(temp[i][j])]
                    if i < len(temp) - 1 or j < len(temp[i]) - 1: sublistLabels = sublistLabels + ","
            return sublistLabels

        # enable image components on white board given an input list to sort
        def enableImageComponents(components,labels,imagePathBase):
            enabledComponents = []
            i = 0
            for component in components:
                if isinstance(component,visual.ImageStim):
                    exId= component.name.split("_")[-2:]
                    if exId[-2] == "ex":
                        imageIdx= exId[-1]
                        if int(imageIdx) > len(labels):
                            component.image = "materials/merge_sort/imgs/white_BG.png"
                        else:
                            component.image = imagePathBase + "_" + labels[i] + ".png"
                            enabledComponents.append(component)
                            i += 1
            return enabledComponents

        def getCorrectMCOrder(N,path1,path2,img1,img2):
            rand_seq = [0, 1, 1, 1, 0, 0, 0, 1, 0, 1, 1, 0, 1, 0, 0, 0, 1, 0, 1, 1, 0, 0, 1, 0, 0, 1, 0, 1, 1, 1]
            order = [rand_seq[N],1-rand_seq[N]]
            if (path1.split("_")[-1] == "wrong.png" and path2.split("_")[-1] == "correct.png") or (path2.split("_")[-1] == "wrong.png" and path1.split("_")[-1] == "correct.png"):
                if order == [1,0]:
                    img1.image = path1
                    img2.image = path2
                else:
                    img1.image = path2
                    img2.image = path1
                return order
            else:
                raise ValueError("Training multiple choice setup is incorrect!")

        def showMergeExpl(submitted,feedback1,feedback2,mc1,mc2,mcPath1,mcPath2,expl1,expl2):
            # finds which choice user has selected
            feedback1.text = ""
            feedback2.text = ""

            if submitted == 0:
                feedback1.text = "SELECTED >>> \n"
            elif submitted == 1:
                feedback2.text = "SELECTED >>> \n"

            # show user which answer is correct and wrong
            if mc_order == [1,0]:
                feedback1.color = green
                feedback2.color = red
                feedback1.text = feedback1.text + "This answer is correct!"
                feedback2.text = feedback2.text + "This answer is wrong!"

                 # show the selections
                mc1.image = mcPath1.split(".png")[0] + "_selected.png"
                mc2.image = mcPath2.split(".png")[0] + "_selected.png"
                expl1.image = mcPath1.split(".png")[0] + "_expl.png"
                expl2.image = mcPath2.split(".png")[0] + "_expl.png"
            else:
                feedback1.color = red
                feedback2.color = green
                feedback1.text = feedback1.text + "This answer is wrong!"
                feedback2.text = feedback2.text + "This answer is correct!"

                 # show the selections
                mc1.image = mcPath2.split(".png")[0] + "_selected.png"
                mc2.image = mcPath1.split(".png")[0] + "_selected.png"
                expl1.image = mcPath2.split(".png")[0] + "_expl.png"
                expl2.image = mcPath1.split(".png")[0] + "_expl.png"

        def checkBGSelection(m,groups,picked):
            for item in groups:
                if m != None and m.isPressedIn(item):
                    for others in groups:
                        others.image = "materials/imgs/" + others.name + ".png"
                    item.image = "materials/imgs/" + item.name + "_selected.png"
                    timeSleep(sleepTime)
                    return item
            return picked

        def timerWarning(timeLimt, timePassed):
            tRemain = int(timeLimt- t)
            if tRemain <= 30:
                return "Remain time sec: "+ str(tRemain)
            else:
                return ""

        def updateTrace(itemPos,newItemPos):
            updated = []
            for i in itemPos:
                for j in newItemPos:
                    if i[0] == j[0] and not (i[1] == j[1] and i[2] == j[2]):
                        updated.append(j)
            return updated
      Before JS Experiment:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        const sleepTime = 0.2;
        const green = [(- 0.0039), 1.0, (- 1.0)];
        const red = [1.0, (- 0.2235), (- 0.4431)];
        const white = [1.0, 1.0, 1.0];
        const traceSaveAtFrame = 20;
        const introTimeL = 120;
        const mergeTestTimeL = 90;
        const mergeTrainTimeL = 90;
        const mergeExplTimeL = 60;
        const sortTestTimeL = 300;
        const sortTrainTimeL = 300;
        const structureTrainTimeL = 300;
        const sortExplTimeL = 60;
        var routineT = 0;
        var comparePressedT = 0.0;
        var isComparePressed = false;
        const scaleEqPath = "materials/merge_sort/imgs/scale_balanced.png";
        const scaleLtPath = "materials/merge_sort/imgs/scale_right.png";
        const scaleGtPath = "materials/merge_sort/imgs/scale_left.png";
        function moveItem(mouse, grabbed) {
            var u, v;
            if (((grabbed !== null) && mouse.isPressedIn(grabbed))) {
                [u, v] = mouse.getPos();
                if (((((left <= u) && (u <= right)) && (bot <= v)) && (v <= top))) {
                    grabbed.pos = [u, v];
                }
                return grabbed;
            } else {
                for (var item, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    item = _pj_a[_pj_c];
                    if ((mouse.isPressedIn(item) && (grabbed !== item))) {
                        return item;
                    }
                }
            }
            return grabbed;
        }
        function comparePickedItems(values, labels, leftInput, rightInput) {
            var leftIdx, leftValue, rightIdx, rightValue;
            if (((leftInput.text.length === 0) || (rightInput.text.length === 0))) {
                return [1,"",""];
            } else {
                if (((leftInput.text.length > 1) || (rightInput.text.length > 1))) {
                    return [2,"",""];
                } else {
                    if (((_pj.in_es6("'"+leftInput.text + "'", labels) === false) || (_pj.in_es6("'"+rightInput.text + "'", labels)) === false)) {
                        return [3,"",""];
                    }
                }
            }
            leftIdx = labels.indexOf("'"+leftInput.text + "'");
            rightIdx = labels.indexOf("'"+rightInput.text + "'");
            leftValue = parseInt(values[leftIdx]);
            rightValue = parseInt(values[rightIdx]);
            if ((leftValue > rightValue)) {
                return [4,leftInput.text,rightInput.text];
            } else {
                if ((leftValue < rightValue)) {
                    return [5,leftInput.text,rightInput.text];
                } else {
                    return [6,leftInput.text,rightInput.text];
                }
            }
        }
        function timeSleep(T) {
            var u;
            u = 0;
            for (var i = 0, _pj_a = Number.parseInt((1000000 * T)); (i < _pj_a); i += 1) {
                u = (u + 1);
            }
        }

        function compare(scale, listValues, labels, compareBtn, instr, scaleLeft, scaleRight) {
            var state;
            state = comparePickedItems(listValues, labels, scaleLeft, scaleRight);
            timeSleep(sleepTime);
            if ((state[0] > 3)) {
                instr.color = green;
                instr.height = 0.05;
                if ((state[0] === 4)) {
                    instr.text = state[1] + " > " + state[2];
                    scale.image = scaleGtPath;
                } else {
                    if ((state[0] === 5)) {
                        instr.text = state[1] + " < " + state[2];
                        scale.image = scaleLtPath;
                    } else {
                        instr.text = state[1] + " = " + state[2];
                        scale.image = scaleEqPath;
                    }
                }
                compareBtn.image = "materials/merge_sort/imgs/compare_clicked.png";
                return [1,state[1],state[2]];
            } else {
                if ((state[0] === 1)) {
                    instr.text = "Please provide labels in correct format for both LHS and RHS";
                    instr.color = red;
                    instr.height = 0.02;
                } else {
                    if ((state[0] === 2)) {
                        instr.text = "Please enter labels as single capitals";
                        instr.color = red;
                        instr.height = 0.02;
                    } else {
                        if ((state[0] === 3)) {
                            instr.text = "Please enter an existing item";
                            instr.color = red;
                            instr.height = 0.02;
                        }
                    }
                }
            }
            return [0,state[1],state[2]];
        }

        function checkSortTrainAns(input, labels, res, feedback_1, feedback_2) {
            var correct, correctValues, submitted, values;
            const inputValues = input.map(x=>parseInt(x));
            correct = getSortTrace(inputValues, labels);
            submitted = res.replace(" ", "");
            values = res.replace(",", "");
            correctValues = correct.replace(",", "");
            if ((submitted === correct)) {
                feedback_1.text = "Your answer is CORRECT!";
                feedback_1.color = green;
                feedback_2.text = "";
            } else {
                if ((values === correctValues)) {
                    feedback_1.text = "Your answer does not have the correct format!\n";
                    feedback_1.color = red;
                    feedback_2.text = ("The correct answer is >>>>\n" + correct);
                    feedback_2.color = green;
                } else {
                    feedback_1.text = "Your answer is WRONG!";
                    feedback_1.color = red;
                    feedback_2.text = ("The correct answer is >>>>\n" + correct);
                    feedback_2.color = green;
                }
            }
        }
        function getSortTrace(input, labels) {
            var sublistLabels, sublists, temp;
            temp = [];
            for (var i, _pj_c = 0, _pj_a = input, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                temp.push([i]);
            }
            console.log(temp);
            while ((temp.length > 1)) {
                sublists = [];
                for (var i = 0, _pj_a = Number.parseInt((temp.length / 2)); (i < _pj_a); i += 1) {
                    const l = temp[(i * 2)].concat(temp[((i * 2) + 1)]);
                    l.sort(function(k,m){return k-m});
                    sublists.push(l);
                }
                if (((temp.length % 2) === 1)) {
                    temp = sublists.concat([temp.slice((- 1))[0]]);
                } else {
                    temp = sublists;
                }
            }
            sublistLabels = "";
            for (var i = 0, _pj_a = temp.length; (i < _pj_a); i += 1) {
                for (var j = 0, _pj_b = temp[i].length; (j < _pj_b); j += 1) {
                    sublistLabels = (sublistLabels + labels[input.indexOf(temp[i][j])][1]);
                    if (((i < (temp.length - 1)) || (j < (temp[i].length - 1)))) {
                        sublistLabels = (sublistLabels + ",");
                    }
                }
            }
            return sublistLabels;
        }
        function enableImageComponents(components, labels, imagePathBase) {
            var enabledComponents, exId, i, imageIdx;
            enabledComponents = [];
            i = 0;
            for (var component, _pj_c = 0, _pj_a = components, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                component = _pj_a[_pj_c];
                if ((component instanceof visual.ImageStim)) {
                    exId = component.name.split("_").slice((- 2));
                    if ((exId.slice((- 2))[0] === "ex")) {
                        imageIdx = exId.slice((- 1))[0];
                        if ((Number.parseInt(imageIdx) > labels.length)) {
                            component.image = "materials/merge_sort/imgs/white_BG.png";
                        } else {
                            component.image = (((imagePathBase + "_") + labels[i].charAt(1)) + ".png");
                            enabledComponents.push(component);
                            i += 1;
                        }
                    }
                }
            }
            return enabledComponents;
        }
        function getCorrectMCOrder(N, path1, path2, img1, img2) {
            var order, rand_seq;
            rand_seq = [0, 1, 1, 1, 0, 0, 0, 1, 0, 1, 1, 0, 1, 0, 0, 0, 1, 0, 1, 1, 0, 0, 1, 0, 0, 1, 0, 1, 1, 1];
            order = [rand_seq[(N)], (1 - rand_seq[(N)])];
            if ((((path1.split("_").slice((- 1))[0] === "wrong.png") && (path2.split("_").slice((- 1))[0] === "correct.png")) || ((path2.split("_").slice((- 1))[0] === "wrong.png") && (path1.split("_").slice((- 1))[0] === "correct.png")))) {
                if ((order[0] === 1 && order[1] === 0)) {
                    img1.image = path1;
                    img2.image = path2;
                } else {
                    img1.image = path2;
                    img2.image = path1;
                }
                return order;
            } else {
                throw new ValueError("Training multiple choice setup is incorrect!");
            }
        }
        function showMergeExpl(submitted, feedback1, feedback2, mc1, mc2, mcPath1, mcPath2, expl1, expl2) {
            feedback1.text = "";
            feedback2.text = "";
            if ((submitted === 0)) {
                feedback1.text = "SELECTED >>> \n";
            } else {
                if ((submitted === 1)) {
                    feedback2.text = "SELECTED >>> \n";
                }
            }
            if ((mc_order[0] === 1 && mc_order[1] === 0)) {
                feedback1.color = green;
                feedback2.color = red;
                feedback1.text = (feedback1.text + "This answer is CORRECT!");
                feedback2.text = (feedback2.text + "This answer is WRONG!");
                mc1.image = (mcPath1.split(".png")[0] + "_selected.png");
                mc2.image = (mcPath2.split(".png")[0] + "_selected.png");
                expl1.image = (mcPath1.split(".png")[0] + "_expl.png");
                expl2.image = (mcPath2.split(".png")[0] + "_expl.png");
                return submitted === 0
            } else {
                feedback1.color = red;
                feedback2.color = green;
                feedback1.text = (feedback1.text + "This answer is WRONG!");
                feedback2.text = (feedback2.text + "This answer is CORRECT!");
                mc1.image = (mcPath2.split(".png")[0] + "_selected.png");
                mc2.image = (mcPath1.split(".png")[0] + "_selected.png");
                expl1.image = (mcPath2.split(".png")[0] + "_expl.png");
                expl2.image = (mcPath1.split(".png")[0] + "_expl.png");
                return submitted === 1
            }
        }
        function checkBGSelection(m, groups, picked) {
            for (var item, _pj_c = 0, _pj_a = groups, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                item = _pj_a[_pj_c];
                if (((m !== null) && m.isPressedIn(item))) {
                    for (var others, _pj_f = 0, _pj_d = groups, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        others = _pj_d[_pj_f];
                        others.image = (("materials/imgs/" + others.name) + ".png");
                    }
                    item.image = (("materials/imgs/" + item.name) + "_selected.png");
                    timeSleep(sleepTime);
                    return item;
                }
            }
            return picked;
        }
        function timerWarning(timeLimt, timePassed) {
            var tRemain;
            tRemain = Number.parseInt((timeLimt - t));
            if ((tRemain <= 30)) {
                return ("Remain time sec: " + tRemain.toString());
            } else {
                return "";
            }
        }
        function updateTrace(itemPos, newItemPos) {
            var updated;
            updated = [];
            for (var i, _pj_c = 0, _pj_a = itemPos, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                for (var j, _pj_f = 0, _pj_d = newItemPos, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    j = _pj_d[_pj_f];
                    if (((i[0] === j[0]) && (! ((i[1] === j[1]) && (i[2] === j[2]))))) {
                        updated.push(j);
                    }
                }
            }
            return updated;
        }
      Begin JS Routine:
        age_selected = null;
        education_selected = null;
        gender_selected = null;
        gender_groups = [female, male, other_gender, prefer_not_to_say];
        age_groups = [_18_24, _25_34, _35_44, _45_54, _55_64, _65];
        education_groups = [less_than_high_school, high_school_equivalent, college, bachelor, graduate, doctorate, other];
        routineT = 0;
      Begin Routine:
        age_selected = None
        education_selected = None
        gender_selected = None

        gender_groups = [female, male, other_gender, prefer_not_to_say]
        age_groups = [_18_24, _25_34, _35_44, _45_54, _55_64, _65]
        education_groups = [less_than_high_school, high_school_equivalent, college, bachelor, graduate, doctorate, other]
      Each Frame:
        gender_selected = checkBGSelection(background_mouse,gender_groups,gender_selected)
        age_selected = checkBGSelection(background_mouse,age_groups,age_selected)
        education_selected = checkBGSelection(background_mouse,education_groups,education_selected)

        if age_selected != None :
            demographic_age = age_selected.name
        if education_selected != None:
            demographic_education = education_selected.name
        if gender_selected != None:
            demographic_gender = gender_selected.name

        if age_selected != None and education_selected != None and gender_selected != None and background_btn.image != "materials/imgs/submit.png":
            background_btn.image = "materials/imgs/submit.png"

        if intro_mouse.isPressedIn(background_btn) and age_selected != None and education_selected != None and gender_selected != None and background_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        gender_selected = checkBGSelection(background_mouse, gender_groups, gender_selected);
        age_selected = checkBGSelection(background_mouse, age_groups, age_selected);
        education_selected = checkBGSelection(background_mouse, education_groups, education_selected);
        if ((age_selected !== null)) {
            demographic_age = age_selected.name;
        }
        if ((education_selected !== null)) {
            demographic_education = education_selected.name;
        }
        if ((gender_selected !== null)) {
            demographic_gender = gender_selected.name;
        }
        if (((((age_selected !== null) && (education_selected !== null)) && (gender_selected !== null)) && (background_btn.image !== "materials/imgs/submit.png"))) {
            background_btn.image = "materials/imgs/submit.png";
        }
        if (((((background_mouse.isPressedIn(background_btn) && (age_selected !== null)) && (education_selected !== null)) && (gender_selected !== null)) && (background_btn.status === PsychoJS.Status.STARTED))) {
            background_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }

        if ((background_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            background_mouse.status = PsychoJS.Status.FINISHED;
        }

        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData('demographic_age',demographic_age);
        psychoJS.experiment.addData('demographic_education',demographic_education);
        psychoJS.experiment.addData('demographic_gender',demographic_gender);
        psychoJS.experiment.addData("background.tEnd",routineT);
  Routine SORT_TEST
    VariableComponent sort_test_compare_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_trace
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_compareN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_test_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_test_scale_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.02
      pos = (-0.65,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = COMPARE weights by typing fruit labels in both LHS and RHS textboxes
      wrapWidth = 0.3
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    TextComponent sort_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Put fruits into the SHIPPING CRATE by entering their labels as  X,X,X,X, ... ,X
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    TextComponent sort_test_instr
      letterHeight = 0.02
      pos = (0.65, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        1. Use the scale on the left to COMPARE weights of TWO fruits by entering the alphabetic CAPITAL labels

        2. You are given a PILE of fruits that is most likely UNORDERED and you can move fruits freely on the MONITOR in the middle

        3. The PURPLE DIAMOND puts fruits from the PILE into the SHIPPING CRATE in INCREASING weights from LEFT to RIGHT

        You have 300 SECS to SUBMIT!
    TextboxComponent sort_test_scale_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      saveStartStop = False
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_scale_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      saveStartStop = False
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_res
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_board
      image [set every repeat] = materials/merge_sort/imgs/purple_diamond.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_scale
      image [set every repeat] = $scaleEqPath
      pos = (-0.65, 0.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_1
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_2
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.2, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_3
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_4
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.1, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_5
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (-0.05, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_6
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.0, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_7
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.05, 0.3)
      saveStartStop = False
      size = (0.06,0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_8
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.1,0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_9
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.15, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_10
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.20, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_11
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.25, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_ex_12
      image = materials/merge_sort/imgs/white_BG.png
      opacity [set every repeat] = 0
      pos [set every repeat] = (0.30, 0.3)
      saveStartStop = False
      size = (0.06, 0.08)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent sort_test_btn
      image = materials/imgs/submit.png
      pos = (0.5, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
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    ImageComponent sort_test_compare
      image = materials/merge_sort/imgs/compare.png
      pos = (-0.65, -0.05)
      saveStartStop = False
      size = (0.16,0.07)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent sort_test_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300
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    TextComponent sort_test_timer
      color = orange
      letterHeight = 0.03
      pos = (0.65, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300
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    CodeComponent sort_test_setup
      Code Type = Both
      Begin JS Routine:
        items = [];
        frameCnt = 0;
        routineT = 0;
        isComparePressed = false;
        comparePressedT = 0.0;
        tracePos = [];
        movingItem = null;
        sort_test_input = input;
        sort_test_labels = encryption;
        sort_test_compareN = 0;
        sort_test_trace = [];
        sort_test_compare_records = [];
        sort_test_compare_limit = ms_compare;
        sort_test_path_base = img_path_base;

        sort_test_res.refresh();
        sort_test_scale_left.refresh();
        sort_test_scale_right.refresh();

        x = sort_test_board.getPos()[0];
        y = sort_test_board.getPos()[1];
        w = sort_test_board.getSize()[0];
        h = sort_test_board.getSize()[1];
        top = (y + (h / 2));
        bot = (y - (h / 2));
        left = (x - (w / 2));
        right = (x + (w / 2));

        const sort_test_mouse_btns = sort_test_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            sort_test_mouse_btns.pressed[b] = 0;
            sort_test_mouse_btns.clocks[b].reset();
            sort_test_mouse_btns.times[b] = 0.0;
        }
      Begin Routine:
        items = []
        frameCnt = 0
        tracePos = []
        movingItem = None

        (x, y) = sort_test_board.pos
        (w,h) = sort_test_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        frameCnt = frameCnt + 1
        if items == []:
            items = enableImageComponents(SORT_TESTComponents,sort_test_labels,sort_test_path_base)

        movingItem = moveItem(sort_test_mouse, movingItem)

        if frameCnt % traceSaveAtFrame == 0:
            newTracePos = []
            for i in items:
                newTracePos.append([i.name.split('_')[-1],i.pos[0],i.pos[1]])
            hasMoved = updateTrace(tracePos,newTracePos)
            if hasMoved != []:
                for j in hasMoved:
                    sort_test_trace.append(j)
            tracePos = newTracePos

        if sort_test_mouse.isPressedIn(sort_test_compare):
            sort_test_compareN = sort_test_compareN + compare(sort_test_scale,sort_test_input,sort_test_labels,sort_test_scale_instr,sort_test_scale_left,sort_test_scale_right)

        sort_test_ans = sort_test_res.text
        sort_test_timer.text = timerWarning(sortTestTimeL,t)
      Each JS Frame:
        frameCnt = (frameCnt + 1);
        if ((items.length === 0)) {
            items = enableImageComponents(SORT_TESTComponents, sort_test_labels, sort_test_path_base);
            for (var i = 0, _pj_a = items.length; (i < _pj_a); i += 1) {
                items[i].opacity = 1.0;
            }
            movingItem = items[0];
        }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.NOT_STARTED) {
              sort_test_mouse.tStart = t;
              sort_test_mouse.frameNStart = frameN;

              sort_test_mouse.status = PsychoJS.Status.STARTED;
              sort_test_mouse.mouseClock.reset();
              prevButtonState = sort_test_mouse.getPressed();
        }

        if ((sort_test_mouse.status === PsychoJS.Status.STARTED || sort_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              sort_test_mouse.status = PsychoJS.Status.FINISHED;
          }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = sort_test_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [sort_test_btn,sort_test_compare]) {
                        if (sort_test_mouse.isPressedIn(obj) && obj.name === "sort_test_btn") {
                            sort_test_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(sort_test_mouse.isPressedIn(obj) && !isComparePressed) {
                                if(obj.name === "sort_test_compare") {
                                    const compareStatus = compare(sort_test_scale, sort_test_input, sort_test_labels, sort_test_compare, sort_test_scale_instr, sort_test_scale_left, sort_test_scale_right);
                                    sort_test_compareN = (sort_test_compareN + compareStatus[0]);
                                    if (compareStatus[0] !== 0) {
                                        sort_test_compare_records.push([compareStatus[1],compareStatus[2]]);
                                    }
                                    comparePressedT = t;
                                    isComparePressed = true;
                                }
                            }
                        }
                    }
                }
            }
        }

        if (t >= 0.5 && sort_test_mouse.status === PsychoJS.Status.STARTED) {
            movingItem = moveItem(sort_test_mouse, movingItem);
            if (((frameCnt % traceSaveAtFrame) === 0)) {
                newTracePos = [];
                for (var i, _pj_c = 0, _pj_a = items, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    newTracePos.push([i.name.split("_").slice((- 1))[0], i.pos[0], i.pos[1]]);
                }
                hasMoved = updateTrace(tracePos, newTracePos);
                if ((hasMoved.length > 0)) {
                    for (var j, _pj_c = 0, _pj_a = hasMoved, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        j = _pj_a[_pj_c];
                        sort_test_trace.push(j);
                    }
                }
                tracePos = newTracePos;
            }
        }

        sort_test_timer.text = timerWarning(sortTestTimeL, t);
        routineT = t;

        if (isComparePressed && (routineT - comparePressedT) >= 0.1) {
            sort_test_compare.image = "materials/merge_sort/imgs/compare.png";
            isComparePressed = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("sort_test_input",sort_test_input);
        psychoJS.experiment.addData("sort_test_labels",sort_test_labels);
        psychoJS.experiment.addData("sort_test_trace",sort_test_trace);
        psychoJS.experiment.addData("sort_test_compare_records",sort_test_compare_records);
        psychoJS.experiment.addData("sort_test_compareN",sort_test_compareN);
        psychoJS.experiment.addData("sort_test.tStart",sort_test_ex_1.tStart);
        psychoJS.experiment.addData("sort_test.tEnd",routineT);
  Routine MERGE_EXPL
    TextComponent merge_expl_initial_state
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.625,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every repeat] = Initial state
      wrapWidth = 0.6
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    TextComponent merge_expl_feedback
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.375,0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      wrapWidth = 0.8
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    TextComponent merge_expl_feedback_1
      letterHeight = 0.035
      pos = (-0.15,0.12)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    TextComponent merge_expl_feedback_2
      letterHeight = 0.035
      pos = (-0.15, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_ex
      image [set every repeat] = $img_path
      pos = (-0.625,0.05)
      size = (0.4,0.2)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (-0.375, 0)
      saveStartStop = False
      size = (0.005,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    ImageComponent merge_expl_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (0.45, 0.25)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (0.45, -0.15)
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_mc_1
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.15,0.25)
      size = (0.3,0.075)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_mc_2
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (-0.15, -0.15)
      size = (0.3,0.075)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    ImageComponent merge_expl_btn
      image = materials/imgs/continue.png
      pos = (0.35, -0.42)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    MouseComponent merge_expl_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60.0
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    TextComponent merge_expl_timer
      color [set every repeat] = white
      letterHeight = 0.03
      pos = (-0.375, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60.0
      text [set every repeat] = Read the feedback and continue whenever you are ready (60 SECS)
      wrapWidth = 0.5
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    CodeComponent merge_expl_setup
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        submitted = 2;
        if (_pj.in_es6("merge_train_btn_1", merge_train_mouse.clicked_name)) {
            submitted = 0;
        } else {
            if (_pj.in_es6("merge_train_btn_2", merge_train_mouse.clicked_name)) {
                submitted = 1;
            }
        }
        if (showMergeExpl(submitted, merge_expl_feedback_1, merge_expl_feedback_2, merge_expl_mc_1, merge_expl_mc_2, merge_train_mc_path_1, merge_train_mc_path_2, merge_expl_1, merge_expl_2)){
            merge_expl_feedback.text = "You answer is CORRECT!";
            merge_expl_feedback.color = green;
        } else {
            if (submitted !== 2) {
                merge_expl_feedback.text = "You answer is WRONG!";
                merge_expl_feedback.color = red;
            }
        }

        routineT = 0;
      Begin Routine:
        submitted = 2
        if "merge_train_btn_1" in merge_train_mouse.clicked_name:
            submitted = 0
        elif "merge_train_btn_2" in merge_train_mouse.clicked_name:
            submitted= 1
        showMergeExpl(submitted,merge_expl_feedback_1,merge_expl_feedback_2,merge_expl_mc_1,merge_expl_mc_2,merge_train_mc_path_1,merge_train_mc_path_2,merge_expl_1,merge_expl_2)
      Each Frame:
        merge_expl_timer.text = timerWarning(mergeExplTimeL,t)
      Each JS Frame:
        const timerString = timerWarning(mergeExplTimeL, t);
        if (timerString !== "") {
            merge_expl_timer.text = timerString;
            merge_expl_timer.color = "orange";
        }

        if (t >= 0.5 && merge_expl_mouse.status === PsychoJS.Status.NOT_STARTED) {
              merge_expl_mouse.tStart = t;
              merge_expl_mouse.frameNStart = frameN;

              merge_expl_mouse.status = PsychoJS.Status.STARTED;
              merge_expl_mouse.mouseClock.reset();
              prevButtonState = merge_expl_mouse.getPressed();
        }

        if ((merge_expl_mouse.status === PsychoJS.Status.STARTED || merge_expl_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              merge_expl_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (merge_expl_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = merge_expl_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [merge_expl_btn]) {
                        if (merge_expl_mouse.isPressedIn(obj) && (obj.name === "merge_expl_btn")) {
                            merge_expl_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        }
                    }
                }
            }
        }

        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("merge_expl.tStart",merge_expl_mc_1.tStart);
        psychoJS.experiment.addData("merge_expl.tEnd",routineT);
  Routine EXP_CHECK
    TextComponent exp_check_question
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
      text = If you have received training or have studied any SORTING algorithms before the experiment, please tell us which one(s) you KNOW and HAVE USED for the experiment:
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    TextboxComponent exp_check_res
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.7,0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    ImageComponent exp_check_btn
      image = materials/imgs/submit.png
      pos = (0, -0.35)
      saveStartStop = False
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent exp_check_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    CodeComponent exp_check_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and exp_check_mouse.status == PsychoJS.Status.NOT_STARTED:
              exp_check_mouse.tStart = t
              exp_check_mouse.frameNStart = frameN

              exp_check_mouse.status = PsychoJS.Status.STARTED
              exp_check_mouse.mouseClock.reset()

        if exp_check_mouse.isPressedIn(exp_check_btn) and exp_check_mouse.status == PsychoJS.Status.STARTED and exp_check_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (exp_check_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            exp_check_mouse.tStart = t;
            exp_check_mouse.frameNStart = frameN;
            exp_check_mouse.status = PsychoJS.Status.STARTED;
            exp_check_mouse.mouseClock.reset();
        }
        if (((exp_check_mouse.isPressedIn(exp_check_btn) && (exp_check_mouse.status === PsychoJS.Status.STARTED)) && (exp_check_btn.status === PsychoJS.Status.STARTED))) {
            exp_check_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        routineT = t;

        if ((exp_check_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            exp_check_mouse.status = PsychoJS.Status.FINISHED;
        }
      End JS Routine:
        psychoJS.experiment.addData("exp_check.tEnd",routineT);
  Routine HINT
    TextComponent intro_text_8
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = *** What ALICE teaches you about the BLUE STAR might help you better learn and work throgh BOB's the PURPLE DIAMOND ***
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    ImageComponent arrow
      image = materials/imgs/arrow.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent alice_5
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.3, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent bob_5
      image = materials/merge_sort/imgs/bob.png
      pos = (0.3, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_8
      image = materials/merge_sort/imgs/door.png
      pos = (-0.5, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_9
      image = materials/merge_sort/imgs/door.png
      pos = (0.5, 0.2)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent hint_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent hint_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120.0
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    CodeComponent hint_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        if t >= 0.5 and hint_mouse.status == PsychoJS.Status.NOT_STARTED:
              hint_mouse.tStart = t
              hint_mouse.frameNStart = frameN

              hint_mouse.status = PsychoJS.Status.STARTED
              hint_mouse.mouseClock.reset()

        if hint_mouse.isPressedIn(intro_btn) and hint_mouse.status == PsychoJS.Status.STARTED and hint_btn.status == STARTED:
            continueRoutine = False
      Each JS Frame:
        if (((t >= 0.5) && (hint_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            hint_mouse.tStart = t;
            hint_mouse.frameNStart = frameN;
            hint_mouse.status = PsychoJS.Status.STARTED;
            hint_mouse.mouseClock.reset();
        }
        if (((hint_mouse.isPressedIn(intro_btn) && (hint_mouse.status === PsychoJS.Status.STARTED)) && (hint_btn.status === PsychoJS.Status.STARTED))) {
            hint_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((hint_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            hint_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("hint.tEnd",routineT);
  Routine STRUCTURE_TRAIN
    VariableComponent structure_train_merge_records
      saveStartStop = False
      startRoutineValue = []
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent structure_train_merge_limit
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = ms_compare
      startVal [time (s)] = 0
      stopVal [time (s)] = 300.0
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    VariableComponent structure_train_mergeN
      saveStartStop = False
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
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    VariableComponent structure_train_labels
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = encryption
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent structure_train_path_base
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent structure_train_input
      saveEndRoutine = False
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent structure_train_merge_instr
      color [set every repeat] = white
      letterHeight [set every repeat] = 0.025
      pos = (-0.55,0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = Apply the BLUE STAR by typing leftmost fruit labels of two grey boxes in both LHS and RHS textboxes
      wrapWidth = 0.4
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    TextComponent structure_train_feedback_1
      color = yellow
      letterHeight = 0.05
      pos = (-0.45, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.4
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    TextComponent structure_train_feedback_2
      color = yellow
      letterHeight = 0.05
      pos = (0.1, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    TextComponent structure_train_instr
      letterHeight = 0.02
      pos = (-0.55, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.4
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      text:
        1. You need to arrange a PILE of fruits that is most likely UNORDERED into ONE COLLECTION with fruits of INCREASING weights from left to right

        2. PRESS the button with the BLUE STAR icon to combine TWO COLLECTIONS at a time

        3. You can see the NUMBER OF COMPARISONS ALICE uses as a reference and you have 300 SECS to SUBMIT!
    TextboxComponent structure_train_sublist_right
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent structure_train_sublist_left
      anchor = top-center
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65,0.35)
      saveStartStop = False
      size = (0.15,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent structure_train_sep
      image = materials/merge_sort/imgs/white_BG.png
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent structure_train_board
      image [set every repeat] = materials/merge_sort/imgs/white_BG.png
      pos = (0.3, 0.15)
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent structure_train_btn
      image = materials/imgs/waiting2.png
      opacity [set every repeat] = 1
      pos = (0.6, -0.35)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    ImageComponent structure_train_merge
      image = materials/merge_sort/imgs/blue_star.png
      pos = (-0.55, 0.2)
      saveStartStop = False
      size = (0.3, 0.09)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    MouseComponent structure_train_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 300.0
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    TextComponent structure_train_timer
      color = orange
      letterHeight = 0.03
      pos = (-0.55, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 300.0
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    CodeComponent structure_train_setup
      Code Type = Both
      Before Experiment:
        pass
      Before JS Experiment:
        _pj = {};
        _pj_snippets(_pj);
        function checkSublistFormatValid(leftInput, rightInput, labels, instr) {
            timeSleep(sleepTime);
            if (((leftInput.text.length === 0) || (rightInput.text.length === 0))) {
                instr.text = "Please provide labels in correct format for both LHS and RHS";
                instr.color = red;
                return false;
            } else {
                if (((leftInput.text.length > 1) || (rightInput.text.length > 1))) {
                    instr.text = "Please enter labels as single capitals";
                    instr.color = red;
                    return false;
                } else {
                    if (((! _pj.in_es6(leftInput.text, labels)) || (! _pj.in_es6(rightInput.text, labels)))) {
                        instr.text = "Please enter the leftmost label of chosen collections";
                        instr.color = red;
                        return false;
                    }
                }
            }
            instr.text = "Apply the BLUE STAR by typing leftmost fruit labels of two grey boxes in both LHS and RHS textboxes";
            instr.color = white;
            return true;
        }

        class Task {
            constructor(input,labels,imgPath,win) {
                /*
                Loads necessary information to manage the task.

                PARAMETERS
                ----------
                task : dictionary containing the scrambled order, letter encryption and icon path
                win : PsychoPy Window
                */
                var a, list, masks;
                this.win = psychoJS.window;
                list = input;
                this.nitems = list.length;
                this.background = [];
                this.fruits = [];
                this.labels = [];
                this.list = [];
                this.mask = [];
                this.background_rects = [];
                for (var i, _pj_c = 0, _pj_a = util.range(list.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    this.list.push([list[i]]);
                    const newRect = new visual.Rect({"win": this.win, "fillColor": "grey", "lineColor": "grey", "lineWidth": 0})
                    newRect.setAutoDraw(true);
                    this.background_rects.push(newRect);
                    const newImg = new visual.ImageStim({"win": this.win, "image": imgPath})
                    newImg.setAutoDraw(true);
                    this.fruits.push(newImg);
                    const newTxt = new visual.TextStim({"win": this.win, "color": "black", "text": ""})
                    newTxt.setAutoDraw(true);
                    this.labels.push(newTxt);
                    this.mask.push([labels[i].replaceAll("'","")]);
                }
                this.names = [...labels];
            }
            update() {
                /*
                Sets up the visuals for the tasks and re-does it from scratch whenever called.
                */
                var SQUARE_DIST, SQUARE_HEIGHT, SQUARE_SIZE, background, fruit, i_i, i_j, label, position;
                SQUARE_SIZE = 0.08;
                SQUARE_HEIGHT = ((SQUARE_SIZE * 16) / 9);
                SQUARE_DIST = 0.03;
                var currentPos = ((- ((this.nitems * SQUARE_SIZE) / 2) + 0.3) + 0.045);
                var cnt = 0;
                for (var i, _pj_c = 0, _pj_a = this.list, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    const len = (2 * i.length - 1) * SQUARE_SIZE + 0.02;
                    const cent = currentPos - 0.04 + (i.length * SQUARE_SIZE / 2);
                    for (var j, _pj_f = 0, _pj_d = i, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                        j = _pj_d[_pj_f];
                        this.background_rects[cnt + _pj_f].pos = [currentPos, 0.225];
                        this.background_rects[cnt + _pj_f].size = [0, 0];
                        this.fruits[cnt + _pj_f].pos = [currentPos, 0.225];
                        this.fruits[cnt + _pj_f].size = [SQUARE_SIZE, SQUARE_SIZE];
                        this.labels[cnt + _pj_f].pos = [currentPos, 0.075];
                        this.labels[cnt + _pj_f].height = SQUARE_DIST;
                        this.labels[cnt + _pj_f].text = this.mask[_pj_c][_pj_f];
                        currentPos += SQUARE_SIZE;
                    }
                    this.background_rects[cnt].pos = [cent, 0.225];
                    this.background_rects[cnt].size = [len, SQUARE_HEIGHT];
                    cnt += i.length;
                }
            }
            clean() {
                for (var i, _pj_c = 0, _pj_a = this.background_rects, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.setAutoDraw(false);
                }
                for (var i, _pj_c = 0, _pj_a = this.fruits, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.setAutoDraw(false);
                }
                for (var i, _pj_c = 0, _pj_a = this.labels, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.setAutoDraw(false);
                }
            }
            draw() {
                /*
                Draws all the visuals of the task.
                */
                for (var i, _pj_c = 0, _pj_a = this.background_rects, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.draw();
                }
                for (var i, _pj_c = 0, _pj_a = this.fruits, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.opacity = 0;
                    i.draw();
                    i.opacity = 1.0;
                    i.draw();
                }
                for (var i, _pj_c = 0, _pj_a = this.labels, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    i.draw();
                }
            }
            merge(x, y) {
                /*
                Merges the two sublists with the given labels. Returns True if it actually did anything.

                PARAMETERS
                ---------
                x : string
                y : string

                RETURNS
                -------
                bool
                */
                var a, a_mask, b, b_mask, i_x, i_y, merged_list, merged_mask;
                if ((((x === y) || (! _pj.in_es6(x, this.names))) || (! _pj.in_es6(y, this.names)))) {
                    return false;
                }
                i_x = util.index(this.names, x);
                i_y = util.index(this.names, y);
                a = this.list[i_x];
                b = this.list[i_y];
                a_mask = this.mask[i_x];
                b_mask = this.mask[i_y];
                const a_mask_c = [...a_mask];
                const b_mask_c = [...b_mask];
                merged_list = [];
                merged_mask = [];
                while (((a.length > 0) || (b.length > 0))) {
                    if (((a.length > 0) && (b.length > 0))) {
                        if ((a[0] > b[0])) {
                            merged_list.push(b[0]);
                            merged_mask.push(b_mask[0]);
                            b.splice(0,1);
                            b_mask.splice(0,1);
                        } else {
                            merged_list.push(a[0]);
                            merged_mask.push(a_mask[0]);
                            a.splice(0,1);
                            a_mask.splice(0,1);
                        }
                    } else {
                        if ((a.length > 0)) {
                            for (var i, _pj_c = 0, _pj_a = a, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                i = _pj_a[_pj_c];
                                merged_list.push(i);
                            }
                            for (var j, _pj_c = 0, _pj_a = a_mask, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                j = _pj_a[_pj_c];
                                merged_mask.push(j);
                            }
                            a = [];
                            a_mask = [];
                        } else {
                            if ((b.length > 0)) {
                                for (var i, _pj_c = 0, _pj_a = b, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                    i = _pj_a[_pj_c];
                                    merged_list.push(i);
                                }
                                for (var j, _pj_c = 0, _pj_a = b_mask, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                    j = _pj_a[_pj_c];
                                    merged_mask.push(j);
                                }
                                b = [];
                                b_mask = [];
                            }
                        }
                    }
                }
                if ((i_x > i_y)) {
                    this.list.splice(i_x,1);
                    this.list.splice(i_y,1);
                    this.mask.splice(i_x,1);
                    this.mask.splice(i_y,1);
                    this.list.splice(i_y, 0, merged_list);
                    this.mask.splice(i_y, 0, merged_mask);
                    this.names.splice(i_x,1);
                    this.names.splice(i_y,1);
                    this.names.splice(i_y, 0, merged_mask[0]);
                } else {
                    if ((i_x < i_y)) {
                        this.list.splice(i_y,1);
                        this.list.splice(i_x,1);
                        this.mask.splice(i_y,1);
                        this.mask.splice(i_x,1);
                        this.list.splice(i_x, 0, merged_list);
                        this.mask.splice(i_x, 0, merged_mask);
                        this.names.splice(i_y,1);
                        this.names.splice(i_x,1);
                        this.names.splice(i_x, 0, merged_mask[0]);
                    }
                }
                const l = [];
                for (var i, _pj_c = 0, _pj_a = this.mask, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    l.push([...i]);
                }
                return [true,a_mask_c,b_mask_c,l];
            }
            merge_cost(x, y) {
                /*
                Calculates the cost of the merge action without actually performing merge
                on the active task.

                PARAMTETERS:
                ------------
                x : String
                y : String

                RETRUNS:
                --------
                cost : int
                */
                var a, b, cost, i_x, i_y;
                if ((((x === y) || (! _pj.in_es6(x, this.names))) || (! _pj.in_es6(y, this.names)))) {
                    return 0;
                }
                cost = 0;
                i_x = util.index(this.names, x);
                i_y = util.index(this.names, y);
                a = [];
                b = [];
                for (var i, _pj_c = 0, _pj_a = this.list[i_x], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    a.push(i);
                }
                for (var i, _pj_c = 0, _pj_a = this.list[i_y], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    b.push(i);
                }
                while (((a.length > 0) || (b.length > 0))) {
                    if (((a.length > 0) && (b.length > 0))) {
                        if ((a[0] > b[0])) {
                            b.splice(0,1);
                            cost += 1;
                        } else {
                            a.splice(0,1);
                            cost += 1;
                        }
                    } else {
                        a = [];
                        b = [];
                    }
                }
                return cost;
            }
        }
      Begin JS Routine:
        routineT = 0;
        isMergePressed = false;
        initiated = false;
        mergePressedT = 0.0;
        structure_train_input = input.map(x=>parseInt(x));
        structure_train_labels = encryption.map(x=>x.replaceAll("'",""));
        structure_train_compareN = 0;
        structure_train_merge_trace = [];
        structure_train_merge_records = [];
        structure_train_merge_limit = ms_compare;
        structure_train_path_base = img_path_base;
        currentTask = new Task(structure_train_input,structure_train_labels,structure_train_path_base+".png",psychoJS.window);

        structure_train_sublist_left.refresh();
        structure_train_sublist_right.refresh();

        structure_train_feedback_2.text = "ALICE uses " + structure_train_merge_limit.toString() + " comparisons\nYou have used in total: 0";

        const structure_train_mouse_btns = structure_train_mouse.psychoJS.eventManager.getMouseInfo().buttons;
        for (const b of [0,1,2]){
            structure_train_mouse_btns.pressed[b] = 0;
            structure_train_mouse_btns.clocks[b].reset();
            structure_train_mouse_btns.times[b] = 0.0;
        }
      Begin Routine:
        pass
      Each Frame:
        # python code to be filled if having offlane exp
        pass
      Each JS Frame:
        if (!initiated) {
            STRUCTURE_TRAINComponents.concat(currentTask.background_rects);
            STRUCTURE_TRAINComponents.concat(currentTask.labels);
            STRUCTURE_TRAINComponents.concat(currentTask.fruits);
            currentTask.update();
            initiated = true;
        }

        if (t >= 0.5 && structure_train_mouse.status === PsychoJS.Status.NOT_STARTED) {
              structure_train_mouse.tStart = t;
              structure_train_mouse.frameNStart = frameN;

              structure_train_mouse.status = PsychoJS.Status.STARTED;
              structure_train_mouse.mouseClock.reset();
              prevButtonState = structure_train_mouse.getPressed();
        }

        if ((structure_train_mouse.status === PsychoJS.Status.STARTED || sort_test_mouse.status === PsychoJS.Status.FINISHED) && t >= frameRemains) {
              structure_train_mouse.status = PsychoJS.Status.FINISHED;
        }

        if (t >= 0.5 && structure_train_mouse.status === PsychoJS.Status.STARTED) {
            _mouseButtons = structure_train_mouse.getPressed();
            if (!_mouseButtons.every( (e,i,) => (e == prevButtonState[i]) )) {
                prevButtonState = _mouseButtons;
                if (_mouseButtons.reduce( (e, acc) => (e+acc) ) > 0) {
                    for (const obj of [structure_train_btn,structure_train_merge]) {
                        if (structure_train_mouse.isPressedIn(obj) && obj.name === "structure_train_btn" && currentTask.names.length == 1) {
        //                if (structure_train_mouse.isPressedIn(obj) && obj.name === "structure_train_btn") {
                            structure_train_mouse.status = PsychoJS.Status.FINISHED;
                            continueRoutine = false;
                        } else {
                            if(structure_train_mouse.isPressedIn(obj) && !isMergePressed) {
                                if(obj.name === "structure_train_merge" && obj.status !== PsychoJS.Status.FINISHED) {
                                    if (checkSublistFormatValid(structure_train_sublist_left, structure_train_sublist_right, structure_train_labels, structure_train_merge_instr)) {
                                        const cost = currentTask.merge_cost(structure_train_sublist_left.text,structure_train_sublist_right.text);
                                        if (cost > 0) {
                                            const res = currentTask.merge(structure_train_sublist_left.text,structure_train_sublist_right.text);
                                            if (res[0]) {
                                                structure_train_compareN += cost;
                                                structure_train_merge_instr.text = "(" + res[1].toString() + ") combined with (" + res[2].toString() + ")";
                                                structure_train_merge_instr.color = green;
                                                structure_train_feedback_1.text = ("Comparison cost of last use: " + cost.toString());
                                                structure_train_feedback_2.text = "ALICE uses " + structure_train_merge_limit.toString() + " comparisons\nYou have used in total: " + structure_train_compareN.toString();
                                                structure_train_merge_trace.push(res[3]);
                                                structure_train_merge_records.push([cost,res[1],res[2]]);
                                            }
                                        }
                                        mergePressedT = t;
                                        isMergePressed = true;
                                        structure_train_merge.image = "materials/merge_sort/imgs/blue_star_clicked.png";
                                        currentTask.update();
                                        currentTask.draw();
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }

        structure_train_timer.text = timerWarning(structureTrainTimeL, t);
        routineT = t;

        if (isMergePressed && (routineT - mergePressedT) >= 0.1) {
            structure_train_merge.image = "materials/merge_sort/imgs/blue_star.png";
            isMergePressed = false;
        }

        if (currentTask.names.length == 1) {
            structure_train_btn.image = "materials/imgs/continue.png";
        }
      End JS Routine:
        currentTask.clean();
        psychoJS.experiment.addData("structure_train_input",structure_train_input);
        psychoJS.experiment.addData("structure_train_labels",structure_train_labels);
        psychoJS.experiment.addData("structure_train_compareN",structure_train_compareN);
        psychoJS.experiment.addData("structure_train_merge_records",structure_train_merge_records);
        psychoJS.experiment.addData("structure_train_merge_trace",structure_train_merge_trace);
        psychoJS.experiment.addData("structure_train.tStart",structure_train_merge.tStart);
        psychoJS.experiment.addData("structure_train.tEnd",routineT);
      End Routine:
        pass
  Routine STRUCTURE_INTRO
    TextComponent intro_text_9
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      wrapWidth = 1.2
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      text:
        ALICE: OOOooO ... The BLUE STAR is an OPERATOR for arranging fruits and incurs a COMPARISON COST after each use.

        1. You need to arrange a PILE of fruits that is most likely UNORDERED into ONE COLLECTION

        2. EACH BLUE STAR operation combines TWO COLLECTIONS at a time, apply iteratively to combine ALL COLLECTIONS

        MINIMISE the cost and try different ways of applying the BLUE STAR
    ImageComponent alice_6
      image = materials/merge_sort/imgs/alice.png
      pos = (-0.25, 0.25)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent structure_example
      image = materials/merge_sort/imgs/structure_train/structure_train_example.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent door_10
      image = materials/merge_sort/imgs/door.png
      pos = (-0.45, 0.25)
      saveStartStop = False
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent structure_intro_btn
      image = materials/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = [0.28,0.1]
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    MouseComponent structure_intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 120
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    CodeComponent structure_intro_code
      Code Type = Both
      Begin JS Routine:
        routineT = 0;
      Each Frame:
        pass
      Each JS Frame:
        if (((t >= 0.5) && (structure_intro_mouse.status === PsychoJS.Status.NOT_STARTED))) {
            structure_intro_mouse.tStart = t;
            structure_intro_mouse.frameNStart = frameN;
            structure_intro_mouse.status = PsychoJS.Status.STARTED;
            structure_intro_mouse.mouseClock.reset();
        }
        if (((structure_intro_mouse.isPressedIn(structure_intro_btn) && (structure_intro_mouse.status === PsychoJS.Status.STARTED)) && (structure_intro_btn.status === PsychoJS.Status.STARTED))) {
            structure_intro_mouse.status = PsychoJS.Status.FINISHED;
            continueRoutine = false;
        }
        if ((structure_intro_mouse.status === PsychoJS.Status.STARTED) && t >= frameRemains) {
            structure_intro_mouse.status = PsychoJS.Status.FINISHED;
        }
        routineT = t;
      End JS Routine:
        psychoJS.experiment.addData("structure_intro.tEnd",routineT);
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
Flow
  Routine BACKGROUND
  Routine INTRO
  Routine HINT
  Routine MERGE_INTRO
  LoopInitiator TRAIN_1 loopType="TrialHandler"
    conditionsFile = materials/merge_train_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1.png'), ('labels', ['A', 'B']), ('input', [4, 2]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_1_1_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2.png'), ('labels', ['A', 'B', 'D', 'C']), ('input', [1, 4, 2, 3]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_1_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2.png'), ('labels', ['A', 'B', 'D', 'C']), ('input', [1, 4, 2, 3]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_2_2_wrong.png')]),
      OrderedDict([('img_path', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5.png'), ('labels', ['C', 'D', 'B', 'A', 'G', 'E', 'F']), ('input', [1, 2, 5, 7, 3, 4, 6]), ('mc_path_1', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_correct.png'), ('mc_path_2', 'materials/merge_sort/imgs/merge_train/merge_train_ex_5_1_wrong.png')])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
    Routine MERGE_TRAIN
    Routine MERGE_EXPL
  LoopTerminator TRAIN_1
  Routine MERGE_TEST_INTRO
  LoopInitiator TEST_1 loopType="TrialHandler"
    conditionsFile = materials/merge_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_1.png'), ('input', [6, 2])]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_2.png'), ('input', [5, 7, 8, 2, 3, 10])])]
    Routine MERGE_TEST
  LoopTerminator TEST_1
  Routine STRUCTURE_INTRO
  LoopInitiator TRAIN_2 loopType="TrialHandler"
    conditionsFile = materials/structure_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine STRUCTURE_TRAIN
  LoopTerminator TRAIN_2
  Routine SORT_INTRO
  LoopInitiator TRAIN_3 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/apple'), ('input', [7, 1, 6, 3, 4, 5, 2]), ('labels', ['D', 'G', 'B', 'F', 'A', 'E', 'C'])])]
    conditionsFile = materials/sort_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TRAIN
    Routine SORT_EXPL
  LoopTerminator TRAIN_3
  Routine SORT_TEST_INTRO
  LoopInitiator TEST_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/fruits/melon'), ('input', [5, 2, 6, 7, 4, 3, 1]), ('labels', ['E', 'B', 'C', 'A', 'F', 'D', 'G'])])]
    conditionsFile = materials/sort_test_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TEST
  LoopTerminator TEST_2
  Routine EXP_CHECK
  Routine DEBRIEF
